config:
  title: His-tagged Protein Purification
  description: His-tagged Protein Purification
  copyright: Klavins Lab
  version: 1.0.1
  authors: [{name: Pei-Rung Wu, affiliation: Klavins Lab @ UW}]
  maintainer: {name: Pei-Rung Wu, email: peirung@uw.edu}
  github: {user: peirung, repo: Protein_purification_v0603}
  aquadoc_version: 1.0.0
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
sample_types:
  - {name: Resin, description: Resin}
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object_types:
  - {name: Column, description: packed column with resin for protein purification, handler: sample_container, unit: column, release_method: dispose, sample_type_name: Resin}
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operation_type: Column Packing
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Affinity Column, sample_types: [Resin], object_types: [Column], routing: B}
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documentation:
The objective of this protocol is to prepare a column packed with Ni-NTA resin and pre-equilibrate with binding buffer.

- Workflow:
  - Harvest Cell > *Column Packing* > Lyse Cell 
- Steps:
  - [01] Prepare binding buffer.
  - [02] Grab a column and attach an adaptor to it.
  - [03] Clamp the column to a support stand.
  - [04] Load Ni-NTA resin into the column.
  - [05] Equilibrate Resin by the binding buffer.

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protocol:
# Author: Pei Wu , Sep 2018

needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  def main

    operations.retrieve.make
    
    op_out_column = []
    op_count = 0

    operations.each do |op|
        op_count = op_count + 1
        op_out_column << op.output("Affinity Column").item.id
    end
    
    tube_count = (op_count*20/50).floor
        if remainer = (op_count*20 % 50) != 0
            tube_count = tube_count + 1
        end
    
    label_column(op_count,op_out_column)
        
    put_column_onto_stand
        
    mix_resin(op_count, op_out_column)
        
    load_20ml_binding_buffer(op_out_column)
    
    clean_up
    
    operations.store
    
    get_protocol_feedback

    return {}
  end
  
  #prepare binding buffer (30mM imidazole_final concentration)
  #20mL/per column, imidazole aliquot concentration: 5M
  def prepare_binding_buffer(op_count,tube_count)
    op_table = [["Item","Volume"],
    ["Purification buffer",{content:"#{op_count*23} mL", check: true}],
    ["Imidazole aliquot",{content:"#{op_count*138} µl", check: true}]
    ]
    show do
        title "Prepare binding buffer"
        check "Grab a beaker."
        note "Write <b>Binding buffer</b> on a piece of lab tape and affix it on the beaker."
        bullet "Grab the following items:"
        note "Purification buffer, in the Media Bay"
        note "Imidazole aliquot, in a box labeled <b>Protein purification</b> in -20°C freezer (B1-165)"
        bullet "Prepare binding buffer according to the table."
        table op_table
        note "Return the buffer and aliquot to the Media Bay and storage box."
        #image "Actions/ProteinPurification/purification_buffer.jpg"
    end
  end

  def label_column(op_count,op_out_column)
    show do 
      title "Grab and label columns"
      check "Grab <b>#{op_count}</b> column(s) and label the column with ID: #{op_out_column.to_sentence}."
      check "Grab <b>#{op_count}</b> flow adaptor(s)."
      check "Remove the snap-off tip at the bottom of the column. Attach a flow adaptor to it (as shown in the picture)."
      image "Actions/ProteinPurification/empty_column_column_packing.jpg"
    end
    
    show do
        title "Column preparation"
        check "Close the column outlet."
        image "Actions/ProteinPurification/oulet_column_packing.jpg"
    end
  end
  
  def put_column_onto_stand
    show do
       title "Column preparation"
       check "Grab a support stand and clamps. Clamp a column to the support stand."
       check "If you are packing more than two columns, grab tubes racks and a storage box to set up a support stand for columns (as shown in the picture)"
       image "Actions/ProteinPurification/packing_four_columns.jpg"
    end
  end
  
  def mix_resin(op_count, op_out_column)
    op_table = [["Column ID","Bed volume of Ni-NTA resin"]]
    for i in 0..(op_count-1)
        row = []
        row << {content:op_out_column[i], check: true}
        row << "2 mL"
        op_table << row
    end
    show do
       title "Load Ni-NTA resin"
       note "Perform the steps with the columns: #{op_out_column.to_sentence}."
       check "Grab <b>#{op_count}</b> 50 mL Falcon tubes and label with #{op_out_column.to_sentence}."
       check "Place the tubes underneath the corresponding column."
       check "Grab Ni-NTA resin from 4°C refrigerator (R1-250). "
       check "Pipet up and down to homogenize the resin by using a P1000 pipettor."
       check "Load 2 mL of Ni-NTA slurry to each column."
       check "Open the column outlet and let the liquid flow through the column."
       check "Check on the resin volume in the column. The volume should be betweeen 1.0-1.5mL mark on the column."
       check "Add more resin to the column if the volume is less than 1 mL."
       check "Return the resin to 4°C refrigerator (R1-250)."
       image "Actions/ProteinPurification/resin_column_packing.jpg"
    end
  end
  
  def load_20ml_binding_buffer(op_out_column)
    show do
       title "Equilibrate Resin"
       note "Perform the steps with the columns: #{op_out_column.to_sentence}."
       check "Close the column outlet."
       check "Grab the purification buffer from 4°C refrigerator."
       check "Grab a motorized pipet and 25 mL serological pipette."
       check "Drip 20 mL of purification buffer to each column along the column wall."
    end
  end
  
  def clean_up
    show do
        title "Clean up"
        check "Return the purification buffer to 4°C refrigerator."
        check "Return the motorized pipet and discard the used serological pipette."
    end
  end
  
  
end

sample_types:
  - {name: Protein, description: Protein}
    - {name: Size, ftype: number, required: true}
    - {name: Wash_Buffer, ftype: number, choices: 5,10,15,30,0, required: true}
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object_types:
  - {name: Protein Elution, description: Protein eluted by imidazole, handler: sample_container, unit: Protein, release_method: dispose, sample_type_name: Protein}
  - {name: Concentrated Protein, description: Concentrated protein elution in the concentrator, handler: sample_container, unit: Protein, release_method: return, prefix: M20, sample_type_name: Protein}
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operation_type: Concentrate Protein
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Protein, sample_types: [Protein], object_types: [Protein Elution], routing: PR}
  - {ftype: sample, role: output, name: Protein, sample_types: [Protein], object_types: [Concentrated Protein], routing: PR}
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documentation:
The objective of this protocol is to lower the imidazole concentration in the protein storage buffer and concentrate protein sample to a higher concentration which both help with increasing protein stability. 

- Workflow:
  - His-tagged Purification > *concentrate protein* > SDS-PAGE Sample Preparation
- Steps:
  - [01] Grab a Centriprep tube and equilibrate the filter with water.
  - [02] Spin for 10 minutes and pour off water
  - [03] Pour the protein elution to the Centriprep tube.
  - [04] centrifuge and collect concentrated protein sample.
  - [05] Measure and record protein concentration.
  - [06] Add glycerol to protein sample for preventing sample from being frozen in -20°C.

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cost_model:
def cost(_op)
  { labor: 0, materials: 1.2 }
end

protocol:
# Author: Pei Wu , Sep 2018

needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  def main
    
    operations.retrieve.make

    op_in_protein = []
    op_out_protein = []
    op_in_protein_leng = []
    op_in_protein_tube = []
    op_count = 0
    operations.running.each do |op|
        # added 3/26 protein_length
        #op.set_input_data("Protein", :Size, Random.rand(10..50)) if debug
        
        tmp_size = op.output("Protein").sample.properties["Size"].to_f
        #tmp_size = Random.rand(10..50) if debug

        op_count = op_count + 1
        op_in_protein << op.input("Protein").item.id
        op_out_protein << op.output("Protein").item.id
        
        # added 3/26 protein_length
        op_in_protein_leng << tmp_size.to_f.round(0)
        
        if tmp_size.to_f >= 40
            op_in_protein_tube << "White Membrane"
        else
            op_in_protein_tube << "Green Membrane"
        end
    end

    # Set the Refrigerated Centrifuge to 4°C first.
    set_refrig_centrifuge_temp
        
    # Take one concentrator and label it with design ID.
    take_and_label_concentrator(op_count,op_in_protein_leng,op_in_protein_tube)
        
    add_sample_to_tube(op_count,op_in_protein)
        
    add_elution_and_centrifuge(op_count,op_in_protein)
    
    buffer_exchange(op_count)
    
    add_elution_and_centrifuge(op_count,op_in_protein)
    
    take_and_label_eppendorf(op_count,op_out_protein)
    
    # Transfer the 1mL sample to the labeled Eppendorf.
    transfer_sample_to_eppendorf(op_count,op_in_protein,op_out_protein)
        
    pro_concentration = measure_concentration(op_out_protein)
        
    # Record the protein concentration.
    i = 0
    operations.running.each do |op|
        protein_out = op.output("Protein").item
        protein_out.associate :protein_concentration, pro_concentration[i]
        i = i + 1
    end
    
    operations.store(io: "output", interactive: true, method: 'boxes')
    
    clean_up
    
    get_protocol_feedback
    
    return {}
  end
  
  def set_refrig_centrifuge_temp
    show do
        title "Pre-cool a centrifuge"
        bullet "Set the centrifuge to 4°C."
        image "Actions/ProteinPurification/centrifuge.jpg"
    end
  end

  def take_and_label_concentrator(op_count,op_in_protein_leng,op_in_protein_tube)
    #added 3/26
    op_table = [["Label","Protein (kDa)","Tubes"]]
    for i in 0..(op_count-1)
        row = []
        row << {content:i+1, check: true}
        row << op_in_protein_leng[i]
        row << "#{op_in_protein_tube[i]} Tube"
        op_table << row
    end
    show do
        title "Label Centriprep tubes"
        check "Grab Centriprep tube(s) (white or green membrane) as follows in the table."
        check "Label Centriprep tube(s) from 1 to #{op_count} on the tube wall and cap."
        table op_table
        image "Actions/ProteinPurification/centriprep_tube.jpg"
    end
  end
    
  def add_sample_to_tube(op_count,op_in_protein)
    op_table = [["Sample ID","Centriprep tube ID"]]
    for i in 0..(op_count-1)
        row = []
        row << {content:op_in_protein[i], check: true}
        row << i+1
        op_table << row
    end
    
    show do
        title "Load protein samples"
        check "Remove caps from Centriprep tubes."
        check "Pour sample into sample container according to the table (as shown in the picture)."
        table op_table
        check "Screw caps back on tubes."
        image "Actions/ProteinPurification/pour_sample_to_concentrator.jpg"
    end
  end
    
  def add_elution_and_centrifuge(op_count,op_in_protein)
    show do
        title "Concentrate protein samples"
        bullet "Perform steps with tubes: ID from 1 to #{op_count}."
        check "Spin at 3000g for 1 hour. Make sure to balance tubes."
        check "Remove Centriprep tubes from the centrifuge."
        check "Discard flow through in the filtrate collector (as shown in the picture)."
        warning "Protein sample is concentrated in the <b>sample container</b>. Be careful not to empty a wrong container."
        check "Reassemble Centriprep tubes."
        image "Actions/ProteinPurification/collect_sample.jpg"
    end
  end

  def buffer_exchange(op_count)
    op_table = [["Centriprep tube ID","1xPBS","50% Glycerol"]]
    for i in 0..(op_count-1)
        row = []
        row << i+1
        row << {content:"500 µl", check: true}
        row << {content:"500 µl", check: true}
        op_table << row
    end

    show do
        title "Buffer exchange"
        bullet "Perform steps with tubes: ID from 1 to #{op_count}."
        check "Grab PBS (pH7.4) "
        check "Add 5 mL PBS into each sample container by using a serological pipette."
        check "Reassemble Centriprep tubes."
        #table op_table
        image "Actions/ProteinPurification/add_pbs_buffer_exchange.jpg"
    end
  end
  
  def take_and_label_eppendorf(op_count,op_out_protein)
    show do
        title "Grab and label tubes"
        check "Grab <b>#{op_count}</b> 1.5 mL tubes."
        check "Label tubes with ID: #{op_out_protein.to_sentence}."
    end
  end
  
 def transfer_sample_to_eppendorf(op_count,op_in_protein,op_out_protein)
    op_table = [["Centriprep tube ID","1.5 mL tube ID"]]
    for i in 0..(op_count-1)
        row = []
        row << i+1
        row << {content:op_out_protein[i], check: true}
        op_table << row
    end
    
    show do
        title "Collect Samples"
        check "Set a P1000 pipettor to 1000 µl."
        check "Check on sample volume :"
        bullet "If sample volume is equal or less than 1000 µl, transfer sample to corresponding 1.5 mL tube according to the table. Then keep sample in ice bath."
        bullet "If sample volume is more than 1000 µl, don't withdraw the sample. Spin the Centriperp tube at 3000g for another 15 
        minutes or until sample volume reaches 1000 µl."
        table op_table
        image "Actions/ProteinPurification/check_on_volume.jpg"
    end
  end
  
  def measure_concentration(op_out_protein)
    protein_concentration = []
    
    op_out_protein.each do |id|
        concetration = show do
            title "Measure protein concentration"
            check "Open Nanodrop in protein mode. Blank with 2 µl PBS."
            check "Nanodrop 2 µl protein sample."
            check "Enter protein concentration."
            get "number", var: "x", label: "Protein concetration of #{id}", default: 0
        end
        protein_concentration << concetration[:x]
    end
    return protein_concentration
  end
  
  def clean_up
    show do
        title "Clean up"
        check "Reset the centrifuge to 23°C."
        check "Discard used Centriprep tubes."
        check "Return the ice bucket/ice block."
    end
  end
end

sample_types:
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker, ftype: string, choices: Amp,Kan,Amp + Kan,Spec,Kan + Spec,Chlor,Tet,NA,Other, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS,TRP,URA,LEU,NatMX,KanMX,HygMX,BleoMX,5FOA,NA,Other, sample_types: [Primer]}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: QC Primer1, ftype: sample, sample_types: [Primer]}
    - {name: QC Primer2, ftype: sample, sample_types: [Primer]}
    - {name: QC_length, ftype: number}
    - {name: Transformation Temperature, ftype: number, choices: 37,30}
  - {name: Primer, description: A short double stranded piece of DNA for PCR and sequencing}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
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object_types:
  - {name: TB Overnight (400 mL) of Plasmid, description: A large overnight of E. coli transformed with a plasmid in TB + antibiotic, handler: sample_container, unit: Plasmid, release_method: query, sample_type_name: Plasmid}
  - {name: Overexpression of Plasmid, description: E. coli transformed with a plasmid in TB + antibiotic and induced by IPTG, handler: sample_container, unit: Plasmid, release_method: dispose, prefix: M20, sample_type_name: Plasmid}
  - {name: Cell Pellet of protein, description: Cell pellet collected by a centrifuge, handler: sample_container, unit: Protein, release_method: dispose, sample_type_name: Protein}
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operation_type: Harvest Cell
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Overexpression, sample_types: [Plasmid], object_types: [TB Overnight (400 mL) of Plasmid], routing: P}
  - {ftype: sample, role: output, name: After IPTG, sample_types: [Plasmid], object_types: [Overexpression of Plasmid], routing: P}
  - {ftype: sample, role: output, name: Cell pellet, sample_types: [Plasmid], object_types: [Cell Pellet of protein], routing: P}
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documentation:
The objective of this protocol is to collect cell pellet by a centrifuge.

- Workflow:
  - IPTG induction > *Harvest Cell* > Column Packing 
- Steps:
  - [01] Retrieve the cell culture from 37°C shaker.
  - [02] Reserve 1 mL of cell culture in a 1.5 mL tube.
  - [03] Pour 200 mL cell culture into a 225 mL Falcon tube.
  - [04] Spin down the cell at 4696g for 15 minutes.
  - [05] Remove the tube from the centrifuge and discard supernatant.  
  - [06] Pour all the remaining cell culture to the tube and spin down the cell at 4696g for another 15 minutes.
  - [07] Pour off supernatant and keep the cell pellet at -80°C freezer.

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protocol:
# Author: Pei Wu , Sep 2018

needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  def main
        
    # Remove the overexpression culture from the shaker.
    operations.retrieve.make
        
    op_in_overexpression = []
    op_out_cell_pellet = []
    op_out_after = []
    op_count = 0
    operations.running.each do |op|
        op_count = op_count + 1
        op_in_overexpression << op.input("Overexpression").item.id
        op_out_cell_pellet << op.output("Cell pellet").item.id
        op_out_after << op.output("After IPTG").item.id
    end

    # Reserve 1ml cell culture after IPTG induction in Eppendorf with design ID 
    reserve_culture_after_iptg(op_count,op_in_overexpression,op_out_after,op_out_cell_pellet)
    
    take_tubes_and_label(op_count,op_in_overexpression,op_out_cell_pellet)
    
    spin_down_cell(op_count,op_out_after,op_in_overexpression,op_out_cell_pellet)

    # Measure OD600 value cell culture after IPTG induction by nanodrop (Prof. James Carother’s lab).
    od_value_after = measure_od_value op_out_after
        
    # Record the OD value.
    i = 0
    operations.running.each do |op|
        sample_after = op.output("After IPTG").item
        sample_after.associate :od_value, od_value_after[i]
        i = i + 1
    end
    
    spin_down_pellet(op_out_after)
    
    spin_down_remaining_cell(op_count,op_out_after,op_in_overexpression,op_out_cell_pellet)
    
      operations.running.each do |op|
      op.output("Cell pellet").child_item.move "-80°C freezer"
    end
    
    operations.store(io: "output", interactive: true, method: 'boxes')
    
    clean_up
    
    get_protocol_feedback

    return {}
  end


  def measure_od_value(meas_sample)
    od_value = []
    show do
        title "Measure OD600 value of cell culture in MolES lab"
        check "Grab a box to carry the following items:"
        bullet "a box of 1000 µl tip"
        bullet "a P1000 pipettor" 
        bullet "a tip waste container" 
        bullet "#{meas_sample.size+1} plastic cuvettes"
        bullet "1 mL of TB aliquot"
        bullet "a marker pen"
        bullet "sample in a 1.5 mL tube: #{meas_sample.to_sentence}"
    end
    
    show do
        title "Measure OD600 value of cell culture in MolES lab"
        note "Perform the following steps with #{meas_sample.to_sentence}."
        bullet "Open Nanodrop 2000 <b>></b> Home <b>></b> cell culture <b>></b> use cuvette <b>></b> pathlength: 10mm <b>></b> stir speed: off"
        bullet "Blank with 1 mL TB in a cuvette."
        bullet "Discard TB to the liquid waste container."
        bullet "Transfer 1 mL of sample to a new cuvette."
        bullet "Measure OD600 value and record it on the 1.5 mL tube wall."
        bullet "Transfer sample from the cuvette back to its 1.5 mL tube."
        warning "In this step, be careful not to pour samples into the liquid waste container."
        image "Actions/ProteinPurification/cuvette_nanodrop.jpg"
    end
    
  def spin_down_pellet(op_out_after)
    show do
        title "Spin down cell"
        note "Perform the steps with 1.5 mL sample tubes: #{op_out_after.to_sentence}."
        check "Spin down at 8000 g for 3 minutes."
        check "Remove tubes from the centrifuge. Pipette out the supernatant and keep pellet."
        check "Place 1.5 mL sample tubes aside for later processing."
    end
  end
    
    meas_sample.each do |id|
      od = show do
        title "Enter OD value"
        get "number", var: "x", label: "Enter OD600 value of #{id}", default: 0
      end
      od_value << od[:x]
    end
    return od_value
  end

  def reserve_culture_after_iptg(op_count,op_in_overexpression,op_out_after,op_out_cell_pellet)
    op_table = [["Cell culture ID","Volume","1.5 mL tube ID"]]
    for i in 0..(op_count-1)
        row = []
        row << op_in_overexpression[i]
        row << "1 mL"
        row << {content:op_out_after[i], check: true}
        op_table << row
    end
    
    show do
        title "Pre-cool a centrifuge"
        check "Set the centrifuge to 4°C."
        image "Actions/ProteinPurification/centrifuge.jpg"
    end
    
    show do
        title "Reserve 1 mL of cell culture before harvesting cell"
        # after IPTG induction
        check "Grab <b>#{op_count}</b> 1.5 mL tube(s)."
        check "Label the tube with ID: #{op_out_after.to_sentence}."
        check "Spray a P1000 pipettor with ethanol and wipe it dry."
        check "Swirl the bottle and transfer 1 mL of cell culture to the corresponding 1.5mL tube."
        note "**Use a new tip for each batch to avoid cross contamination.**"
        check "Place the 1.5 mL sample tubes aside for later task."
        table op_table
    end
  end
  
  def take_tubes_and_label(op_count,op_in_overexpression,op_out_cell_pellet)
    op_table = [["Cell culture ID","Volume","225 mL Falcon tube ID"]]
    for i in 0..(op_count-1)
        row = []
        row << op_in_overexpression[i]
        row << "220 mL"
        row << {content:op_out_cell_pellet[i], check: true}
        op_table << row
    end
    
    show do
        title "Prepare tubes"
        check "Grab a ice bucket and fill it with ice."
        check "Grab <b>#{op_count}</b> 225 mL Falcon tube(s) and label with ID: #{op_out_cell_pellet.to_sentence} on the tube wall."
        check "Place tubes in ice bath."
        image "Actions/ProteinPurification/225_falcon_tube.jpg"
    end
    
    show do 
      title "Harvest cell"
      check "Pour approximately 220 mL of cell culture into the corresponding tube and screw the cap."
      table op_table
    end
  end
  
  def spin_down_cell(op_count,op_out_after,op_in_overexpression,op_out_cell_pellet)
      
    run = (op_count/4).floor
    remainder = op_count % 4
    if (remainder) != 0
        run = run + 1
    end
    
    for i in 1..run
        if (i*4 > op_count)
            leng = remainder
        else
            leng = 4
        end
        tube_id = op_out_after[(i-1)*4,leng]
        
        show do
            title "Spin down the cell"
            note "Perform the steps with the following tubes: #{op_out_cell_pellet.to_sentence}."
            check "Balance samples in tubes."
            check "Spin tubes at 4696g for 20 minutes."
            check "While waiting, proceed to measure OD value of reserved 1.5 mL tubes on the rack."
        end
    end
  end
  
  def spin_down_remaining_cell(op_count,op_out_after,op_in_overexpression,op_out_cell_pellet)
    op_table = [["Cell culture ID","225 mL Falcon tube ID"]]
    for i in 0..(op_count-1)
        row = []
        row << op_in_overexpression[i]
        row << {content:op_out_cell_pellet[i], check: true}
        op_table << row
    end
    
    run = (op_count/4).floor
    remainder = op_count % 4
    if (remainder) != 0
        run = run + 1
    end
    
    for i in 1..run
        if (i*4 > op_count)
            leng = remainder
        else
            leng = 4
        end
        tube_id = op_out_after[(i-1)*4,leng]
        
        show do 
            title "Continue to harvesting the remaining cell in 2L flask"
            note "Perform the steps with the tubes: #{op_out_cell_pellet.to_sentence}."
            check "Remove tubes from 4°C centrifuge after the first 20-min spin is done."
            check "Pour supernatant into a liquid waste container or sink. Keep pellet."
            check "Pour approximately 220 mL of cell culture into a tube according to the table."
            table op_table
            check "Balance samples in tubes."
            check "Spin tubes at 4696g for 20 minutes." 
        end
        
        show do
            title "Retrieve tubes"
            check "Remove tubes from centrifuge after the 20-min spin is done."
            check "Reset the centrifuge to 23°C."
            check "Pour supernatant into a the used 2L flask or sink. Keep pellet."
            check "Store #{op_out_cell_pellet.to_sentence} in -80°C freezer."
        end
    end
  end
    
  def clean_up
    show do
        title "Clean up"
        check "Place used 2L flask in the dishwashing area."
        check "Return ice bucket."
        check "Clean plastic cuvettes by rinsing with water twice."
        check "Rinse cuvettes with 70% ethanol."
        check "Return them back to the storage box."
    end
  end

end

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object_types:
  - {name: Cell Lysate of Protein Expression, description: Lysed and sonicated cell lysate in lysis buffer, handler: sample_container, unit: Protein, release_method: dispose, sample_type_name: Protein}
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operation_type: His-tagged Purification
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Cell Lysate, sample_types: [Plasmid], object_types: [Cell Lysate of Protein Expression], routing: P}
  - {ftype: sample, role: output, name: Protein, sample_types: [Protein], object_types: [Protein Elution], routing: PR}
  - {ftype: sample, role: input, name: Resin, sample_types: [Resin], object_types: [Column], routing: R}
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documentation:
The objective of this protocol is to capture a target protein by using its binding capacity to Ni-NTA resin.

- Workflow:
  - Lyse cell > *His-tagged Purification* > Concentrate Protein 
- Steps:
  - [01] Prepare wash buffer and elution buffer.
  - [02] Remove cell particles from the sample by loading sample to an empty column and passing through an 30 µm filter in the column.
  - [03] Apply sample to the packed column.
  - [04] Wash the column by wash buffer.
  - [05] Elute protein sample by elution buffer.

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protocol:
# Author: Pei Wu , Sep 2018

needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  def main

    operations.retrieve.make

    op_in_cell_lysate = []
    op_in_resin = []
    op_out_protein = []
    op_wash_amount = []
    op_count = 0
    operations.running.each do |op|
        op_count = op_count + 1
        op_in_cell_lysate << op.input("Cell Lysate").item.id
        op_in_resin << op.input("Resin").item.id
        op_out_protein << op.output("Protein").item.id
        op_wash_amount << op.output("Protein").sample.properties["Wash_Buffer"].to_f
    end
    
    # Turn on the stopcock and let the binding buffer flow through of the column.
    turn_on_stopcock_binding(op_count,op_in_resin,op_in_cell_lysate)
        
    # Apply the supernatant with design ID into the gravity flow column with resin in it.
    apply_supernatnat(op_count,op_in_cell_lysate,op_in_resin)
    
    reload_sample(op_count,op_in_resin,op_out_protein,op_in_cell_lysate)
    
    apply_supernatnat(op_count,op_in_cell_lysate,op_in_resin)
    
    #turn_on_stopcock_supernatant(op_count,op_in_cell_lysate,op_in_resin)
    buffer_preparation(op_count,op_in_cell_lysate,op_wash_amount,op_out_protein)
    
    # Add 50mL wash buffer to the column and let it flow through the column completely. Then turn off the stopcock.
    add_wash_buff(op_count,op_in_resin,op_out_protein,op_in_cell_lysate)
    
    prepare_elution_buffer(op_count,op_out_protein,op_in_cell_lysate)
        
    # Add 7.5mL elution buffer into the column.
    add_elution_buff(op_count,op_in_resin,op_out_protein)
        
    operations.running.each do |op|
      op.output("Protein").child_item.move "4°C or on ice for the (next) protocol"
    end

    operations.store(io: "output", interactive: true)
    
    clean_up
    
    get_protocol_feedback

    return {}

  end
  
  # approximate final concentration of imidazole: 5-30mM wash buffer/250mM elution buffer
  def buffer_preparation(op_count,op_in_cell_lysate,op_wash_amount, op_out_protein)
    op_table =[["Falcon tube ID","Purification buffer volume","Imidazole volume"]]
    
    for i in 0..(op_count-1)
        #if !op_wash_amount[i]
            #op_wash_amount[i] = 5
        #end
        row = []
        row << op_in_cell_lysate[i]
        row << {content: "15 mL", check: true}
        row << {content: "#{op_wash_amount[i]*3} µl", check: true}
        op_table << row
    end
    
    show do
        title "Prepare wash buffer"
        check "Grab Purification Buffer from 4°C refrigerator."
        check "Grab a imidazole aliquot, in a box labeled <b>protein purification</b> in -20°C freezer (B1-165)"
        #check "Grab <b>#{op_count}</b> 50 mL Falcon tube and label with #{op_in_cell_lysate.to_sentence} on the tube wall."
        check "Prepare wash buffer according to the table."
        check "Mix the buffer by quick vortexing."
        table op_table
    end
  end

  def turn_on_stopcock_binding(op_count,op_in_resin,op_in_cell_lysate)
    show do
        title "Remove liquid from the column"
        check "Open the column outlet. Allow buffer to flow out of the column."
        check "Leave 0.5-1 mL buffer in the column to prevent resin dry out, then close the column outlet."
        check "Discard flow through in the tube. Return the tube underneath the corresponding column"
        check "Grab <b>#{op_count}</b> disposable dropper(s)."
        check "Label droppers with ID: #{op_in_cell_lysate.to_sentence}"
        check "Place dropper in its corresponding sample tube (as shown in the picture). Place caps aside for later use."
        image "Actions/ProteinPurification/droppers.jpg"
    end
  end
    
  def apply_supernatnat(op_count,op_in_cell_lysate,op_in_resin)
    op_table = [["Sample ID","Column ID"]]
    for i in 0..(op_count-1)
        row = []
        row << op_in_cell_lysate[i]
        row << op_in_resin[i]
        op_table << row
    end
    show do
       title "Load sample to a column"
       check "Load sample to its corresponding column by using a plastic dropper."
       note "**Be careful not to disturb the resin. Use a new dropper for each sample to avoid cross contamination.**"
       table op_table
       check "Partially open the column oulet and make sample slowly flow out of the column (as show in the picture)."
       check "Continue loading sample to its corresponding column until all of the sample has applied to the column."
       check "Leave 0.5-1 mL sample in the column to prevent resin dry out, then close the column outlet."
       image "Actions/ProteinPurification/outlet_angle.jpg"
    end
  end
  
  def reload_sample(op_count,op_in_resin,op_out_protein,op_in_cell_lysate)
    op_table = [["Elution tube ID","Sample tube ID"]]
    for i in 0..(op_count-1)
        row = [] 
        row << op_in_resin[i]
        row << op_in_cell_lysate[i]
        op_table << row
    end
    show do
        title "Transfer elution to its sample tube"
        check "Pour all the elution back to its sample tube according to the table." 
        table op_table
        check "Return the empty elution tube underneath its corresponding column for collecting sample."
    end
  end
  
  
  def add_wash_buff(op_count,op_in_resin,op_out_protein,op_in_cell_lysate)
    op_table = [["Wash buffer tube ID","Column ID"]]
    for i in 0..(op_count-1)
        row = []
        row << op_in_cell_lysate[i]
        row << op_in_resin[i]
        op_table << row
    end
    show do
       title "Column wash"
       check "Discard flow through in the tube. Return the tube back underneath the corresponding column."
       check "According to the table, load all of the wash buffer to each column by using a dropper."
       table op_table
       check "Fully open the column outlet. Allow buffer to flow out of the column."
       check "Leave 0.5-1 mL buffer in the column to prevent resin dry out, then close the column outlet."
       check "Remove the tubes underneath each column. Discard flow through, all falcon tubes, and droppers."
    end
  end
  
  def prepare_elution_buffer(op_count,op_out_protein,op_in_cell_lysate)
    op_table = [["Falcon tube ID","Purification buffer volume","Imidazole volume"]]
    for i in 0..(op_count-1)
        row = []
        row << op_out_protein[i]
        row << {content:"7.5 mL", check: true}
        row << {content:"400 µl", check: true}
        op_table << row
    end
        
    show do
        title "Prepare elution buffer"
        check "Grab <b>#{op_count}</b> Falcon tube(s)."
        check "Label tube(s) with ID: #{op_out_protein.to_sentence} on the tube wall and cap."
        check "Prepare elution buffer according to the table."
        check "Mix the buffer by quick vortexing."
        table op_table
    end
  end
  
  def add_elution_buff(op_count,op_in_resin,op_out_protein)
    op_table_1 = [["Elution buffer tube ID","Column ID"]]
    for i in 0..(op_count-1)
        row = []
        row << op_out_protein[i]
        row << op_in_resin[i]
        op_table_1 << row
    end
        
    show do
       title "Elute protein sample"
       check "Grab <b>#{op_count}</b> droppers."
       check "Load elution buffer to its corresponding column according to the table, and then return the empty tube underneath the column for collecting sample."
       table op_table_1
       check "Fully open the column oulet and make sample slowly flow out of the column."
       check "Close the column outlet."
       check "Screw the cap back onto the tube. Keep sample in ice bath."
    end
  end
  
  def clean_up
    show do
        title "Clean up"
        check "Return the purification buffer to 4°C refrigerator."
        check "Return imidazole aliquot to -20°C freezer."
        check "Detach adaptors from columns."
        check "Clean up adaptors by rinsing with water."
        check "Discard used columns and Falcon tubes."
        check "Discard used droppers."
        check "Disassemble the support stand and return it to the drawer."
    end
  end
  
end

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object_types:
  - {name: TB Overnight of Plasmid, description: An overnight of E. coli transformed with a plasmid in TB + antibiotic, handler: sample_container, unit: Plasmid, release_method: return, prefix: DFO, sample_type_name: Plasmid}
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operation_type: IPTG Induction
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Overexpression, sample_types: [Plasmid], object_types: [TB Overnight of Plasmid], routing: P}
  - {ftype: sample, role: output, name: Overexpression, sample_types: [Plasmid], object_types: [TB Overnight (400 mL) of Plasmid], routing: P}
  - {ftype: sample, role: output, name: Before IPTG, sample_types: [Plasmid], object_types: [Overexpression of Plasmid], routing: P}
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documentation:
The objective of this protocol is to use IPTG to induce the expression of a protein of interest.

- Workflow:
  - Make Overexpression > *IPTG Induction* > Harvest Cell
- Steps:
  - [01] Retrieve the 450 mL cell culture from 37°C shaker.
  - [02] Reserve 1 mL of cell culture to a 1.5 mL tube.
  - [03] Add IPTG to the 450 mL cell culture and return it to 37°C shaker.
  - [04] Incubate the cell culture for 4 hours.
  - [05] While cells incubate, measure and record OD600 value of the 1 mL reserved cell culture.
  - [06] Spin down cell and store the cell pellet at -20°C.

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protocol:
# Author: Pei Wu , Sep 2018

needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  def main
        
    # Remove the overexpression culture from the shaker.
    operations.retrieve.make
        
    op_in_overexpression = []
    op_out_overexpression = []
    op_out_before = []
    op_count = 0
    operations.running.each do |op|
        op_count = op_count + 1
        op_in_overexpression << op.input("Overexpression").item.id
        op_out_overexpression << op.output("Overexpression").item.id
        op_out_before << op.output("Before IPTG").item.id
    end
    
    # Reserve 1ml cell culture before IPTG induction in Eppendorf with design ID
    reserve_culture_before_iptg(op_count,op_in_overexpression,op_out_before)
    
    # Add isopropyl-1-thio-beta-D-galactopyranoside (IPTG) into the culture.
    add_iptg(op_count,op_in_overexpression)
    
    
    relabel_overexpression(op_count,op_in_overexpression,op_out_overexpression)
        
    # Keep the culture in 30 °C shaker for 5 hours.
    culture_in_shaker_for_4hrs
    
    spin_down_pellet(op_out_before)

    operations.running.each do |op|
        op.set_input_data("Overexpression", :od_value, Random.rand(0.8..1.0)) if debug
        
        od_input = op.input_data("Overexpression", :od_value).to_f
        sample_before = op.output("Before IPTG").item
        sample_before.associate :od_value, od_input
    end
    
    operations.running.each do |op|
      op.output("Overexpression").child_item.move "30°C shaker incubator"
    end
    
    operations.store(io: "output", interactive: true, method: "boxes")
    
    get_protocol_feedback

    return {}
  end

  def reserve_culture_before_iptg(op_count,op_in_overexpression,op_out_before)
    op_table = [["Cell culture ID","Volume","1.5 mL tube ID"]]
    for i in 0..(op_count-1)
        row = []
        row << op_in_overexpression[i]
        row << "1 mL"
        row << {content:op_out_before[i], check: true}
        op_table << row
    end
    show do
      title "Reserve 1 mL of cell culture before performing IPTG induction"
      check "Grab <b>#{op_count}</b> 1.5mL tube(s)."
      check "Label tube(s) with ID: #{op_out_before.to_sentence}."
      check "Spray a P1000 pipettor with ethanol and wipe it dry."
      check "Swirl the bottle and transfer 1 mL of cell culture to the corresponding 1.5 mL tube."
      note "**The flask walls should not be touching the pipettor.**"
      check "Place 1.5 mL sample tubes aside for later task."
      table op_table
    end
  end
  

  def add_iptg(op_count,op_in_overexpression)
    op_table = [["Cell culture ID","IPTG Volume"]]
    for i in 0..(op_count-1)
        row = []
        row << op_in_overexpression[i]
        row << {content: "1 aliquot", check: true}
        op_table << row
    end
    show do 
      title "IPTG induction"
      check "Grab <b>#{op_count}</b> IPTG aliquot(s) from a box labeled <b>protein purification</b> in -20°C freezer (B1-165)."
      check "Defrost the aliquot(s) by hands or a vortex."
      check "Add one IPTG aliquot to each 2L flask: #{op_in_overexpression.to_sentence}." 
      table op_table
    end
  end
  
  def relabel_overexpression(op_count,op_in_overexpression,op_out_overexpression)
    op_table = [["Old sample ID","New Label"]]
    for i in 0..(op_count-1)
        row = []
        row << op_in_overexpression[i]
        row << {content:op_out_overexpression[i], check: true}
        op_table << row
    end
    show do
        title "Relabel 2L flasks with new ID"
        check "Write new ID on a piece of lab tape and affix it on the old label (or cross old ID out and then label with new ID)."
        table op_table
    end
  end
  
  def culture_in_shaker_for_4hrs
    show do 
      title "Incubate"
      check "Place the large cell culture at 30°C shaker incubator for 5 hours."
      bullet "<a href=\'https://www.google.com/search?q=5%20hour%20timer\' target=\'_blank\'>Use a 5 hour Google timer</a> to set a reminder, at which point you will start the <b>\'Harvest Cell\'</b> protocol."
      check "While the cell cultures incubate, finish this protocol by completing the remaining tasks."
    end
  end
  
  def spin_down_pellet(op_out_before)
    show do
        title "Spin down cell"
        note "Perform the steps with the following 1.5 mL tubes: #{op_out_before.to_sentence}."
        check "Spin down at 8000g for 3 minutes."
        check "Remove tubes from the centrifuge. Pipette out the supernatant and keep pellet."
    end
  end
  
  def measure_od_value(meas_sample)
    od_value = []
    show do
        title "Measure OD600 value of cell culture in MolES lab"
        check "Grab a box to carry the following items:"
        bullet "a box of 1000 µl tip"
        bullet "a P1000 pipettor" 
        bullet "a tip waste container" 
        bullet "#{meas_sample.size+1} plastic cuvettes"
        bullet "TB aliquot"
        bullet "a marker pen"
        bullet "sample in a 1.5 mL tube: #{meas_sample.to_sentence}"
    end
    
    show do
        title "Measure OD600 value of cell culture in MolES lab"
        bullet "Open Nanodrop 2000 <b>></b> Home <b>></b> cell culture <b>></b> use cuvette <b>></b> pathlength: 10mm <b>></b> stir speed: off"
        bullet "Blank with 1 mL TB in a cuvette."
        bullet "Discard TB to the liquid waste container."
        bullet "Transfer 1 mL of #{meas_sample.to_sentence} to a new cuvette."
        bullet "Measure OD600 value and record it on the 1.5 mL tube wall."
        bullet "Transfer sample from the cuvette back to its 1.5 mL tube."
        warning "In this step, be careful not to pour samples into the liquid waste container. You will need to keep the samples for later task."
        image "Actions/ProteinPurification/cuvette_nanodrop.jpg"
    end
    
    meas_sample.each do |id|
      od = show do
        title "Enter OD value"
        get "number", var: "x", label: "Enter OD600 value of #{id}", default: 0
      end
      od_value << od[:x]
    end
    return od_value
  end
  
end

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operation_type: Lyse Cell
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Cell Pellet, sample_types: [Plasmid], object_types: [Cell Pellet of protein], routing: P}
  - {ftype: sample, role: output, name: Cell Lysate, sample_types: [Plasmid], object_types: [Cell Lysate of Protein Expression], routing: P}
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documentation:
The objective of this protocol is to lyse cell by a sonicator and then spin the sample to collet supernatant for applying to a packed column.

- Workflow:
  - Column Packing > *Lyse cell* > His-tagged Purification
- Steps:
  - [01] Grab cell pellet from -80°C freezer and thaw it on ice.
  - [02] Prepare lysis buffer.
  - [03] Suspend cell pellet in lysis buffer and incubate for 20 minutes on ice.
  - [04] Lyse cell by a sonicator.
  - [05] Spin down cell with a high speed centrifuge.
  - [06] Keep supernatant and discard the cell pellet.

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protocol:
# Author: Pei Wu , Sep 2018

needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  def main
    operations.retrieve.make
    
    op_in_cell_pellet = []
    op_out_cell_lysate = []
    op_count = 0
    operations.running.each do |op|
        op_count = op_count + 1
        op_in_cell_pellet << op.input("Cell Pellet").item.id
        op_out_cell_lysate << op.output("Cell Lysate").item.id
    end
    
     # Take the cell paste from -80°C and let cells thaw on ice.
    take_cell_pellet(op_in_cell_pellet)
    
    # Take and add 50mL lysis buffer into a 50mL Falcon tube and add one tablet of protease inhibitor.
    take_lysis_buff(op_count,op_in_cell_pellet)
        
    # Shake the Falcon tube and mix the buffer well until the protease inhibitor tablet fully dissolved in the lysis buffer.
    distribute_lysis_buff(op_count,op_in_cell_pellet)
        
    # Lyse the cell by a sonicator in Prof. Seelig’s Lab.
    lyse_cell_by_sonicator(op_count,op_in_cell_pellet,op_out_cell_lysate)
        
    # Turn on the sonicator and set the time and temperature condition, 95% power output, 10secs on, 30secs off, repeat 30 rounds.
    set_up_sonicator(op_count)
    
    add_binding_buffer(op_count)
    
    weigh_and_balance_tubes(op_count)
         
    # Spin by the tabletop high-speed centrifuge under 24,000g for 30mins at 4°C.
    spin_hs_centrifuge(op_count)
        
    # Transfer the supernatant to new tubes and discard the cell pellet.
    transfer_supernatant_to_new_tubes_label(op_count,op_in_cell_pellet,op_out_cell_lysate)
    
    operations.running.each do |op|
      op.output("Cell Lysate").child_item.move "4°C or on ice for the (next) protocol"
    end
    
    operations.store(io: "output", interactive: true)
    get_protocol_feedback

    return {}

  end
  
  def take_cell_pellet(op_in_cell_pellet)
    show do
       title "Thaw cell pellets on ice"
       check "Grab a ice bucket and fill it with ice."
       check "Keep #{op_in_cell_pellet.to_sentence} in ice bath."
    end
  end

  def take_lysis_buff(op_count,op_in_cell_pellet)
    op_table = [["Falcon tube ID","Lysis buffer volume","Protease inhibitor"]]
    for i in 0..(op_count-1)
        row = []
        row << i+1
        row << "20 mL"
        row << "2 tablets"
        op_table << row
    end
    show do
        title "Lysis buffer preparation"
        check "Grab <b>#{op_count}</b> 50 mL Falcon tube and a rack."
        check "Label tube from 1 to #{op_count} on the tube wall and cap."
        check "Grab lysis buffer and protease inhibitor from 4°C refrigerator."
        check "Pour 20 mL of lysis buffer to each tube."
        check "Add 2 tablets of protease inhibitor to each tube by using a tweezer."
        table op_table
        check "Place tubes on platform shaker until the tablets are fully dissovled."
        check "Return lysis buffer and protease inhibitor."
    end
  end

  def distribute_lysis_buff(op_count,op_in_cell_pellet)
    op_table = [["50 mL Falcon tube ID","225 mL Falcon tube ID"]]
    for i in 0..(op_count-1)
        row = []
        row << i+1
        row << {content:op_in_cell_pellet[i], check: true}
        op_table << row
    end
    show do
       title "Suspend pellets in lysis buffer"
       note "Perform the following steps on ice."
       check "Pour lysis buffer into the corresponding 225 mL tube."
       table op_table
       check "Keep the used 50 mL Falcon tubes (ID from 1 to #{op_count}) on a rack for later use."
       check "Grab motorized pipet and <b>#{op_count}</b> 25mL-serological pipette(s)."
       check "Pipet up and down to suspend cell pellets in lysis buffer. In this step, you can scratch off the pellet by the pipette tip, and then suspend it until homogenized. Make sure no cell clumps remain on the pipette tip. No vortexing."
       if op_count <= 2
            check "Incubate #{op_in_cell_pellet.to_sentence} in ice bath for 15 minutes."
            timer initial: { hours: 0, minutes: 15, seconds: 0}
       end
    end
  end
  
  def lyse_cell_by_sonicator(op_count,op_in_cell_pellet,op_out_cell_lysate)
    op_table = [["225 mL Falcon tube ID","50 mL Falcon tube ID"]]
    for i in 0..(op_count-1)
        row = []
        row << op_in_cell_pellet[i]
        row << i+1
        op_table << row
    end
    show do
       title "Transfer samples to Falcon tubes"
       check "Pour cell lysate back to the corresponding 50 mL tube."
       table op_table
       check "Place sample tubes in ice bath."
       check "Discard the used 225 mL tubes."
       
    end
    show do
        title "Sonication preparation"
        bullet "Bring the following items to the sonicator."
        check "All samples (ID: 1 to #{op_count}) and the ice bucket."
        check "a 600 mL beaker and marker pen"
        check "Ethanol spray bottle and Kimwipes."
    end
  end
  
  def set_up_sonicator(op_count)
    show do
        title "Set up a sonicator"
        bullet "Turn on the sonicator."
        bullet "Press <b>ENTER</b> to set the processing parameters:"
        note  "95% power delivered to the probe"
        note "10 secs ON, 30 secs OFF, repeat 30 rounds and the total time is 1200 seconds."
        bullet "Spray the sonicator tip with Ethanol and wipe it dry with Kimwipes."
        bullet "Insert the tube (ID:1) in the beaker filled with ice. (as shown in the picture 1) "
        bullet "Use the adjustable knob to immerse the sonicatior tip into the sample (as shown in the picture 2). Leave 2-3 cm space between tip point and the bottom of a tube."
        warning "Sonicator tip should not be touching the bottom or sides of the tube."
        bullet "Press <b>START</b> to activiate sonication."
        bullet "After 30 rounds are done, screw the cap and put it back to the ice bucket. Circle the tube ID on the cap as completed."
        bullet "Spray the sonicator tip with Ethanol and wipe it dry in each time switching to the next tube."
        bullet "Pour off water from the beaker and add fresh ice on the top in each time starting a new cycle of sonication, preventing ice melting too fast. (as shown in the picture 3 & 4)"
        bullet "Perform sonication from tube 1 to #{op_count} until all tubes have been done."
        #warning "A temperature increase in the sample might denature protein. Keep the tube on ice while performing sonication."
        image "Actions/ProteinPurification/sonication_four_steps.jpg"
    end
  end
  
  def add_binding_buffer(op_count)
    show do
        title "Add purification buffer"
        check "Grab purification buffer from 4°C refrigerator."
        check "Add purification buffer up to the 40 mL-mark in each tube (ID from 1 to #{op_count})."
        check "Keep tubes in ice bath."
        check "Return purification buffer to 4°C refrigerator."
    end
  end
    
  def weigh_and_balance_tubes(op_count)
    show do
        title "Scale balancing"
        check "Weigh the tubes. Balance samples in tubes."
        check "If the balance is off, add Purification Buffer into the sample tube until a balance is reached."
        warning "It's very important to balance tubes before using the high-speed centrifuge."
    end
  end
  
  def spin_hs_centrifuge(op_count)
    show do
        title "Spin down cells"
        note "Bring tubes (ID: 1 to #{op_count}) in a ice bucket to a high-speed centrifuge."
        check "Spin at 24,000g for 30 minutes at 4°C."
        timer initial: { hours: 0, minutes: 30, seconds: 0}
        check "Remove tubes from the high speed centrifuge. Keep tubes in ice bath."
        image "Actions/ProteinPurification/high_speed_centrifuge.jpg"
    end
  end
    

  def transfer_supernatant_to_new_tubes_label(op_count,op_in_cell_pellet,op_out_cell_lysate)
    op_table = [["Sample tube ID","column ID"]]
    for i in 0..(op_count-1)
        row = []
        row << i+1
        row << {content:op_out_cell_lysate[i], check: true}
        op_table << row
    end
    
    show do
        title "Transfer samples"
        check "Grab <b>#{op_count}</b> 50 mL Falcon tube(s)."
        check "Label tube(s) with ID: #{op_out_cell_lysate.to_sentence} on the tube wall and cap."
        check "Pour supernatant to new tubes according to the table."
        check "Place tubes in ice bath."
        table op_table
    end
    
    show do
        title "Clean up"
        check "Discard tubes with ID: 1 to #{op_count}."
    end
  end
end

sample_types:
  - {name: Assay Buffer, description: A buffer that is tailored to a specific type of assay or experiment}
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object_types:
  - {name: 500 mL Liquid, description: 500 mL Liquid, handler: sample_container, data: { "samples": [ { "name": "Histidine Solution", "materials": 16.04, "labor": 3.50, "unit": "mL", "total_volume": 500 }, { "name": "Leucine Solution", "materials": 15.07, "labor": 3.50, "unit": "mL", "total_volume": 500 }, { "name": "Tryptophan Solution", "materials": 19.29, "labor": 3.50, "unit": "mL", "total_volume": 500}, { "name": "Uracil Solution", "materials": 13.57, "labor": 3.50, "unit": "mL", "total_volume": 500}, { "name": "10% Glycerol", "materials": 0.0062, "labor": 0.0144, "unit": "mL", "total_volume": 500 } ] }, unit: Media, release_method: return, sample_type_name: Media}
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operation_type: Lysis Buffer Preparation
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Lysis buffer, sample_types: [Assay Buffer], object_types: [500 mL Liquid], routing: L}
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documentation:
The objective of this protocol is to prepare lysis buffer for His-tagged protein purification workflow.

- Steps:
  - [01] Gather the chemical reagents.
  - [02] Prepare the buffer according to the receipe.
  - [03] Measure and adjust the pH value to 8.0
  - [04] Keep the buffer in 4°C refrigerator.

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protocol:
#Pei 2019
#Recipe: 1X PBS, 1% Trition X-100, pH 7.4 EDTA-Free protease inhibitor(freshly add in the protocol of "Lyse Cell")


class Protocol

  def main

    operations.make
    
    show do
            title "Gather the Following Items:"
            check "a 600 mL beaker and label it with lysis buffer."
            check "10X PBS (pH 7.4)"
            check "Trition X-100"
    end
    
    show do
            title "Add following chemical reagents to a 600 mL beaker."
            check "300 mL of sterile DI water"
            note "**If there is no sterile water, use DI water and then filter the buffer by a top-bottle filter in the final step of this protocol.**"
            check "Using a serological pipette, add 50mL of 10X PBS to the beaker."
            check "Using a serological pipette, add 5 mL of Triton X-100 to the beaker."
            check "Fill the beaker with sterile DI water up to the 500-mL mark."
            check "Put a stir bar in the beaker and stir the buffer for 2 minutes."
    end
    
 
    show do
            title "Label the bottle"
            check "Grab a 500 mL bottle and label it with <b>Lysis Buffer, your initials, the date</b>"
            check "Pour the prepared buffer to bottle."
            note "If you are using non-sterile DI water, filter the buffer by a top-bottle filter in this step."
            check "Place the Lysis buffer in 4°C refrigerator(BO.110)."
    end
    
    show do
            title "Clean up"
            check "Place the used beaker in the dishwashing area."
    end
    
    
    operations.store interactive: false
    
    return {}
    
  end

end

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operation_type: Make IPTG Aliquots
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: IPTG Aliquot, sample_types: [Assay Buffer], routing: I}
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documentation:
The objective of this protocol is to prepare IPTG aliquots for His-tagged protein purification workflow.

- Steps:
  - [01] Gather the chemical reagents.
  - [02] Prepare the buffer according to the receipe.
  - [03] Keep aliquots in -20°C freezer.

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protocol:
#Pei, 2019
#Recipe: 0.5M IPTG solution (final concentration in the 450 mL of cell culture is 0.5mM), molar mass of IPTG(Isopropyl beta-D-1-thiogalactopyranoside): 238.30 g/mol

class Protocol

  def main

    operations.make
    
    show do
            title "Gather the Following Items:"
            check "<b>18</b> 1.5 mL tubes and label them with <b>IPTG</b>"
            check "a bottle of IPTG powder (1g / per bottle)"
    end
    
    show do
            title "Add water to the bottle"
            check "Add 8.3 mL of sterile DI water"
            check "Mix the solution until IPTG powder is fully dissolved."
    end

    show do
            title "Make aliquots"
            check "Distribute 450 µl of the IPTG-buffer into the 1.5 mL tubes."
            check "Place the aliquots in a box labeled <b>protein purification</b> in -20°C freezer (B1-165)."
    end
    
    show do
            title "Clean up"
            check "Discard the empty bottle."
    end
    
    
    operations.store interactive: false
    
    return {}
    
  end

end

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operation_type: Make Imidazole Aliquots
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Imidazole Aliquot, sample_types: [Assay Buffer], routing: I}
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documentation:
The objective of this protocol is to prepare imidazole aliquots for His-tagged protein purification workflow.

- Steps:
  - [01] Gather the chemical reagents.
  - [02] Prepare the buffer according to the receipe.
  - [03] Measure and adjust the pH value to 8.0
  - [04] Keep aliquots in -20°C freezer.

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protocol:
#Pei, 2019
#Recipe: 5M imidazole solution,pH 8.0 molar mass of imidazole: 68.077 g/mol

class Protocol

  def main

    operations.make
    
    show do
            title "Gather the Following Items:"
            check "<b>17</b> 2 mL tubes and label them with <b>imidazile</b>"
            check "imidazole"
            check "a 50 mL beaker"
    end
    
    show do
            title "Add following reagents to the beaker"
            check "10.2 g of imidazole."
            check "15 mL of sterile DI water"
            check "Put a stir bar in the beaker and stir the buffer on the stir plate until imidazole is fully dissolved."
    end
    
    show do
            title "pH value calibration"
            check "Grab pH meter from the drawer."
            check "Grab three 50 mL Falcon tubes."
            check "Label the tubes with pH 4, pH 7 and pH 10."
            check "Grab pH standard solutions: pH 4 (red), pH 7 (yellow), pH 10 (blue)."
            check "Distribute 45 mL of each pH standard solutions into three different tubes."
            check "Press <b>ON/OFF</b> button on the pH meter."
            check "Dip electrode about 2 cm into the pH 7 (yellow) standard buffer solution."
            check "Press the CAL button to enter calibration mode. The CAL indicator will be shown on the screen display."
            check "Allow about 30-40 seconds for the pH meter reading to stablize, then press the <b>HOLD/ENT</b> button to confirm the first calibration point."
            check "Rinse electrode by DI water and wipe it dry with KimWipes."
    end
    
    show do
            title "Second calibration point"
            check "Dip electrode about 2 cm into the pH 4 (red) standard buffer solution."
            check "Press the CAL button to enter calibration mode. The CAL indicator will be shown on the screen display."
            check "Allow about 30-40 seconds for the pH meter reading to stablize, then press the <b>HOLD/ENT</b> button to confirm the second calibration point."
            check "Rinse electrode by DI water and wipe it dry with KimWipes."
    end 
    
    show do
            title "Third calibration point"
            check "Dip electrode about 2 cm into the pH 10 (blue) standard buffer solution."
            check "Press the CAL button to enter calibration mode. The CAL indicator will be shown on the screen display."
            check "Allow about 30-40 seconds for the pH meter reading to stablize, then press the <b>HOLD/ENT</b> button to confirm the third calibration point."
            check "After the third point calibration, the meter will automatically return to the measurement mode."
            check "Rinse electrode by DI water and wipe it dry with KimWipes."
    end
    
    show do
            title "pH value adjustment"
            check "Dip electrode about 2 cm into the buffer in the 500 mL beaker."
            check "Use 5M NaOH or HCl solution to adjust the pH value to pH 8.0"
            note "Continuely stir the buffer on a stir plate."
            note "Wait for 1 minutes to let the reading stablize. Make sure the pH value is 8.0"
            check "Press <b>ON/OFF</b> to turn off the meter."
            check "Rinse electrode by DI water and wipe it dry with KimWipes."
            check "Return the meter and three standard buffers."
    end

    show do
            title "Make aliquots"
            check "Fill the beaker with sterile DI water to the 30 mL mark. Stir the buffer for 2 minutes."
            check "Aliquot 1800 µl of the buffer into each 2 mL tubes."
            check "Place the aliquots in a box labeled <b>protein purification</b> in -20°C freezer (B1-165)."
    end
    
    show do
            title "Clean up"
            check "Discard the used beaker and stir bar."
    end
    
    
    operations.store interactive: false
    
    return {}
    
  end

end

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operation_type: Make Overexpression
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Overnight, sample_types: [Plasmid], object_types: [TB Overnight of Plasmid], routing: P}
  - {ftype: sample, role: output, name: Overexpression, sample_types: [Plasmid], object_types: [TB Overnight of Plasmid], routing: P}
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documentation:
The objective of this protocol is to grow the cell culture for making a protein of interest.

- Workflow:
  - Make a Starter > *Make Overexpression* > IPTG induction
- Steps:
  - [01] Label a 2L flask and load 450 mL of LB with ampicilin to the flask.
  - [02] Transfer 10 mL of overnight starter culture into the flask.
  - [03] Grow cell culture in 37C shaker for 2.5 hours.
  - [04] Measure OD600 value and make sure the cell density is in the range of 0.6-1.2.

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protocol:
# Author: Pei Wu , Sep 2018

needs "Cloning Libs/Cloning"
needs "Standard Libs/Debug"
needs "Standard Libs/Feedback"

class Protocol

  include Feedback
  include Cloning
  include Debug

  def main
    # Remove the starter from the shaker.
    operations.retrieve
    
    # check the starter(input) have growth
    verify_growth(operations)
    
    operations.make

    op_in_overnight = []
    op_in_bac = []
    op_out_overexpression = []
    op_count = 0

    operations.each do |op|
        op_count = op_count + 1
        op_in_overnight << op.input("Overnight").item.id
        op_in_bac << op.input("Overnight").child_sample.properties["Bacterial Marker"].upcase
        op_out_overexpression << op.output("Overexpression").item.id
    end


    take_flask_add_medium(op_count,op_out_overexpression,op_in_bac)

    grow_culture_in_shaker(op_count,op_in_overnight,op_out_overexpression)

    operations.running.each do |op|
      op.input("Overnight").child_item.store
    end    
    operations.store(io: "input", interactive: true)
    
    set_timer_150mins(op_out_overexpression,op_count)

    od_tmp = measure_od_value(op_out_overexpression)

    record_od_and_decide(od_tmp, operations)

    # Check if there's any sample need to re-measure OD, max. 10 times of re-measureing.
    for i in 1..10
        re_measure_op = operations.select { |op| op.temporary[:redo]==true }.map
        if re_measure_op.size == 0
            break
        else
            op_tmp_overexpression = []
            re_measure_op.each do |op|
                op_tmp_overexpression << op.output("Overexpression").item.id
            end
            od_tmp = measure_od_value(op_tmp_overexpression)
            record_od_and_decide(od_tmp, re_measure_op)
        end
    end
    
    # after 10 times, delete the sample whose OD value is still too low.
    re_measure_op = operations.select { |op| op.temporary[:redo]==true }.map
    if re_measure_op.size != 0
        tmp_id = []
        re_measure_op.each do |op|
            culture = op.output("Overexpression").item
            tmp_id << culture.id
            culture.mark_as_deleted
            culture.save
            op.temporary[:redo] = false
            op.temporary[:delete] = true
            op.error :od_error, "The cell density of #{culture.id} is too high to do induction. Tell the manager and discard the cell culture in the dishwashing area."
        end
        show do
            title "Sample deleted!"
            note "#{tmp_id.to_sentence} are deleted because their OD values are still too low after 10 times."
        end
    end
        

    
    # move overexpression to "37°C shaker incubator"
    operations.running.each do |op|
      op.output("Overexpression").child_item.move "4°C or on bench for (next) protocol"
    end
    
    clean_up(op_out_overexpression)
    
    operations.store(io: "output", interactive: true)
    
    get_protocol_feedback
    
    return {}
  end
  
  def verify_growth(operations)
    verify_growth = show do
        title "Check if overnight starters have growth"
        note "Choose No for the overnight starter that does not have growth. Empty flask and put in the clean station."
        operations.each do |op|
            in_id = op.input("Overnight").item.id
            select ["Yes", "No"], var: "verify #{in_id}", label: "Does flask #{in_id} have growth?"  
        end
    end
    
    operations.select { |op| verify_growth[:"verify#{op.input("Overnight").item.id}".to_sym] == "No" }.each do |op|
        on = op.input("Overnight").item
        on.mark_as_deleted
        on.save
            
        op.error :no_growth, "Your overnight starter had no growth!"
    end
  end    
  
  def take_flask_add_medium(op_count,op_out_overexpression,op_in_bac)
    op_table = [["Overexpression flask ID","Media"]]
    for i in 0..(op_count-1)
      row = []
      row << {content:op_out_overexpression[i], check: true}
      row << "440 mL TB + " + op_in_bac[i]
      op_table << row
    end
    
    show do 
      title "Label flasks and load media"
      check "Grab <b>#{op_count}</b> 2L flask(s) (Sterile). Write ID #{op_out_overexpression.to_sentence} on a piece of lab tape and affix it on the flask."
      check "Grab a graduated cylinder (Sterile). Add 440 mL of media to each flask according to the table below."
      table op_table
      image "Actions/ProteinPurification/glass_flask_column_packing.jpg"
    end
  end
  
   # tell technicians to return the cultures to the 37°C shaker
  def grow_culture_in_shaker(op_count,op_in_overnight,op_out_overexpression)
    op_table = [["Overnight starter ID","Volume","Overexpression flask ID"]]
    for i in 0..(op_count-1)
      row = []
      row << op_in_overnight[i]
      row << "10 mL"
      row << {content:op_out_overexpression[i], check: true}
      op_table << row
    end
    
    show do
      title "Transfer the overnight starter into the flask"
      check "Grab a motorized pipet."
      check "Swirl the bottle and transfer 10 mL of overnight starter culture into the corresponding flask by using a motorized pipet."
      note "**Use a new serological pipette for each batch to avoid cross contamination.**"
      table op_table
      check "Return the motorized pipet."
    end
    
    show do
        title "Store overnight starter"
        check "In the Media Bay, collect <b>#{op_count}</b> 14 mL tube(s)."
        check "Label tube(s) with ID: #{op_in_overnight.to_sentence}."
        check "Pour all the remaining overnight starter in the glass flask to the corresponding 14 mL tube."
    end
  end
  
   def set_timer_150mins(op_out_overexpression,op_count)
    show do
      title "Grow cell culture in 37°C shaker"
      check "Incubate #{op_out_overexpression.to_sentence} at 37°C shaker."
      check "Set a 80-minute timer." 
      timer initial: { hours: 1, minutes: 20, seconds: 0}
    end
    
    show do
        title "Check cell density"
        check "Retrieve #{op_out_overexpression.to_sentence} from 37°C shaker."
        check "Grab <b>#{op_count}</b> 1.5 mL tube(s). Label with ID: #{op_out_overexpression.to_sentence}."
        check "Spray a P1000 pipettor with ethanol and wipe it dry with a paper towel."
        check "Swirl the bottle and transfer 1mL of cell culture to the corresponding 1.5 mL tube."
        note "**The flask walls should not be touching the pipettor.**"
        check "Temporarily keep the 2L flask(s) on bench."
    end
  end
  
  def measure_od_value(meas_sample)
    od_value = []
    show do
        title "Measure OD600 value of cell culture in MolES lab"
        check "Grab a box to carry the following items:"
        bullet "a box of 1000 µl tip"
        bullet "a P1000 pipettor" 
        bullet "a tip waste container" 
        bullet "#{meas_sample.size+1} plastic cuvettes"
        bullet "1 mL of TB aliquot"
        bullet "a marker pen"
        bullet "1 mL of sample in a 1.5 mL tube: #{meas_sample.to_sentence}"
    end
    
    show do
        title "Measure OD600 value of cell culture in MolES lab"
        note "Perform the following steps with #{meas_sample.to_sentence}."
        bullet "Open Nanodrop 2000 <b>></b> Home <b>></b> cell culture <b>></b> use cuvette <b>></b> pathlength: 10mm <b>></b> stir speed: off"
        bullet "Blank with 1 mL TB in a cuvette."
        bullet "Transfer TB back to its 1.5 mL tube."
        bullet "Transfer 1 mL of sample to a new cuvette."
        bullet "Measure OD600 value and record it on the 1.5 mL tube wall."
        bullet "Discard sample into the liquid waste container."
        bullet "Keep the sample tube labeled with OD value."
        image "Actions/ProteinPurification/cuvette_nanodrop.jpg"
    end
    meas_sample.each do |id|
      od = show do
        title "Enter OD value of cell culture"
        get "number", var: "x", label: "OD600 value of #{id}", default: 0.8
      end
      od_value << od[:x]
    end
    return od_value
  end
  
  
  def record_od_and_decide(od_tmp,op_list)
    op_table = [["Batch","Sample ID","OD value","Action"]]

    timer_flag = 0
    sample_remeasure = []
    
    j = 0

    op_list.each do |op|
        row = []
        row << (j + 1)
        culture = op.output("Overexpression").item
        # associate the OD value to the outputs
        culture.associate :od_value, od_tmp[j]
        row << culture.id
        row << od_tmp[j]
        if od_tmp[j].to_f > 3
            culture.mark_as_deleted
            culture.save
            op.temporary[:redo] = false
            op.temporary[:delete] = true
            op.error :od_error, "The cell density of #{culture.id} is too high to do induction. Tell the manager and discard the cell culture in the dishwashing area."
            row << "Discard the sample"
        else
            if od_tmp[j].to_f < 0.8
                row << "Return the cell culture to 37°C shaker and remeasure OD value after 15 minutes."
                op.temporary[:redo] = true
                sample_remeasure << culture.id
                timer_flag = 1
            else
                row << "This cell culture is ready for the next step. If there has another batch of cell culture waiting for a remeasurement, place this cell culture on the bench until all remeasurements are finished." 
                op.temporary[:redo] = false
            end
        end
        op_table << row
        j = j + 1
    end
    
    show do
        title "Cell density and actions"
        table op_table
        if timer_flag == 1
            bullet "Return #{sample_remeasure.to_sentence} to 37°C shaker. The cell density is too low."
            bullet "Remeasure OD value of the sample: #{sample_remeasure.to_sentence} after 15 minutes."
            timer initial: { hours: 0, minutes: 15, seconds: 0}
        end
    end
    
  end
  
  def clean_up(op_out_overexpression)
    show do
        title "Clean up"
        check "Discard used 1.5 mL tube(s) of #{op_out_overexpression.to_sentence}."
        check "Clean plastic cuvettes by rinsing with water twice."
        check "Rinse cuvettes with 70% ethanol."
        check "Return them back to the storage box."
    end
  end

end

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object_types:
  - {name: Checked E coli Plate of Plasmid, description: It's a checked plate, handler: sample_container, unit: plate, release_method: return, sample_type_name: Plasmid}
  - {name: Plasmid Glycerol Stock, description: Glycerol Stock of E. coli (usually DH5alpha) containing plasmid DNA stock, handler: sample_container, unit: Plasmid, release_method: return, prefix: M80, sample_type_name: Plasmid}
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operation_type: Make a Starter
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Plasmid, sample_types: [Plasmid, Plasmid], object_types: [Checked E coli Plate of Plasmid, Plasmid Glycerol Stock], routing: P}
  - {ftype: sample, role: output, name: Overnight, sample_types: [Plasmid], object_types: [TB Overnight of Plasmid], routing: P}
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documentation:
The objective of this protocol is to prepare an overnight starter for the next day to amplify a large volume of cell culture.

- Workflow:
  - Check Plate > *Make a Starter* > Make Overexpression 
- Steps:
  - [01] Grab a 200 mL glass flask and label with ID.
  - [02] Load 12 mL of LB with ampicilin to the flask.
  - [03] Use a 10 µl sterile tip to inoculate an isolated colony from the plate into 200 mL glass flask.
  - [04] Incubate cell in 37C shaker overnight.

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protocol:
# Author: Pei Wu , Oct 2018
# Note: modified from "Cloning/Make Overnight Suspension"

needs "Cloning Libs/Cloning"
needs "Standard Libs/Debug"
needs "Standard Libs/Feedback"

class Protocol

  include Feedback    
  include Cloning
  include Debug

  def main
      
    operations.retrieve(interactive: false)
    
    operations.make
    
    p_ot = ObjectType.where(name: "Checked E coli Plate of Plasmid").first 
    
    raise "Could not find object type 'Checked E coli Plate of Plasmid'" unless p_ot
    
    plate_inputs = operations.running.select { |op| op.input("Plasmid").item.object_type_id == p_ot.id }
    
    g_ot = ObjectType.where(name: "Plasmid Glycerol Stock").first 
    
    raise "Could not find object type 'Plasmid Glycerol Stock'" unless g_ot 
    
    glycerol_stock_inputs = operations.running.select { |op| op.input("Plasmid").item.object_type_id == g_ot.id }
    
    overnight_steps plate_inputs, "Checked E coli Plate of Plasmid" if plate_inputs.any?
    overnight_steps glycerol_stock_inputs, "Plasmid Glycerol Stock" if glycerol_stock_inputs.any?
    
    # Associate input id with from data for overnight.
    operations.running.each do |op|
      gs = op.input("Plasmid").item
      on = op.output("Overnight").item
      
      on.associate :from, gs.id
      pass_data "sequencing results", "sequence_verified", from: gs, to: on
    end
    
    operations.running.each do |op|
      op.output("Overnight").child_item.move "37°C shaker incubator"
    end
    
    operations.store
    
    get_protocol_feedback
    
    return {}

  end 
  
  def overnight_steps(ops, ot)
    if ot == "Plasmid Glycerol Stock"
      ops.retrieve interactive: false
    else
      ops.retrieve
    end
    
    # Sorting ops by the bacterial marker attribute
    temp = ops.sort do |op1,op2|
      op1.input("Plasmid").child_sample.properties["Bacterial Marker"].upcase <=> op2.input("Plasmid").child_sample.properties["Bacterial Marker"].upcase
    end
    ops = temp
    
    ops.extend(OperationList)
   
    #Label and load overnight tubes 
    label_load_tubes ops

    #Inoculation
    inoculate ot, ops
      
  end
  
  # Given operations, tells the technician to label and load the tubes the tubes
  def label_load_tubes ops
    show do
      title "Label and load overnight glass flasks"
      check "Grab <b>#{ops.length}</b> 125 mL glass flask (sterile)."
      check "Grab media in 4°C refrigerator according to the table below."
      check "Write the overnight ID on a piece of lab tape and affix it on the glass flask."
      check "Remove caps from the top of glass flasks."
      check "Add 15 mL of media to each glass flask by using a motorized pipet."
      table ops.start_table
        .output_item("Overnight", checkable: true)
        .custom_column(heading: "Media") { |op| "TB+" + op.input("Plasmid").child_sample.properties["Bacterial Marker"].upcase}
        .custom_column(heading: "Volume") { |op| "15 mL" }
        .end_table
    end
  end
  
  # Tells the technician to inoculate colonies from plate into glass flask.
  def inoculate ot, ops
    show {
      title "Inoculation from #{ot}"
      # note "Use 10 uL sterile tips to inoculate colonies from plate into 14 mL tubes according to the following table." if ot == "Checked E coli Plate of Plasmid"
      check "Spray a P1000 pipettor with ethanol and wipe it dry."
      check "Use 1000 µl pipette tip to inoculate an isolated colony from plate into 125 mL flask according to the following table." if ot == "Checked E coli Plate of Plasmid"
      check "Use 100 µl pipette to inoculate cells from glycerol stock into the 125 mL flask according to the following table." if ot == "Plasmid Glycerol Stock"
      note "**The inside flask walls should not be touching the pipettor.**"
      check "Put caps back on the top of glass flasks."
      check "Return the media to the refrigerator."
      table ops.start_table
        .input_item("Plasmid", heading: ot)
        .custom_column(heading: "#{ot} Location") { |op| op.input("Plasmid").item.location }
        .output_item("Overnight", checkable: true)
        .end_table
     
    } 
  end
end 

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operation_type: Purification Buffer Preparation
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Purification Buffer, sample_types: [Assay Buffer], object_types: [500 mL Liquid], routing: P}
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documentation:
The objective of this protocol is to prepare purification buffer for His-tagged protein purification workflow.

- Steps:
  - [01] Gather the chemical reagents.
  - [02] Prepare the buffer according to the receipe.
  - [03] Measure and adjust the pH value to 8.0
  - [04] Keep the buffer in 4°C refrigerator.

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protocol:
#Pei 2019
#Recipe: 50mM sodium phosphate buffer, 300mM NaCl (molar mass: 58.44 g/mol), 0.01% Triton X-100, pH 7.7
#Sodium phosphate dibasic, 7-Hydrate (Na2HPO4.7H2O) FW 268.07
#Sodium phosphat monobasic, monohydrate (NaH2PO4.H2O) FW 137.99

class Protocol

  def main

    operations.make
    
    show do
            title "Gather the Following Items:"
            check "a 600 mL beaker"
            check "10X PBS (pH 7.4)"
            check "Sodium phosphate dibasic, 7-Hydrate (Na2HPO4.7H2O) FW 268.07 "
            check "Sodium phosphate monobasic, monohydrate (NaH2PO4.H2O) FW 137.99"
            check "Sodium chloride, NaCl"
            check "Trition X-100"
    end
    
    show do
            title "Add following chemical reagents to the 600 mL beaker"
            check "6.24 g of sodium phosphate dibasic, 7-Hydrate (Na2HPO4.7H2O)"
            check "0.24 g of sodium phospate monobasic, monohydrate (NaH2PO4.H2O)"
            check "1.46 g of NaCl"
            check "300 mL of sterile DI water"
            note "**If there is no sterile water, use DI water and then filter the buffer by a top-bottle filter in the final step of this protocol.**"
            check "Using a serological pipette, add 50mL of 10X PBS to the beaker"
            check "50 µl of Triton X-100"
            check "Put one stir bar into the beaker and stir the buffer until the reagents are fully dissolved."
    end
    
    show do
            title "pH value calibration"
            check "Grab pH meter from the drawer."
            check "Grab three 50 mL Falcon tubes."
            check "Label the tubes with pH 4, pH 7 and pH 10."
            check "Grab pH standard solutions: pH 4 (red), pH 7 (yellow), pH 10 (blue)."
            check "Distribute 45 mL of each pH standard solutions into three different tubes."
            check "Press <b>ON/OFF</b> button on the pH meter."
            check "Dip electrode about 2 cm into the pH 7 (yellow) standard buffer solution."
            check "Press the CAL button to enter calibration mode. The CAL indicator will be shown on the screen display."
            check "Allow about 30-40 seconds for the pH meter reading to stablize, then press the <b>HOLD/ENT</b> button to confirm the first calibration point."
            check "Rinse electrode by DI water and wipe it dry with KimWipes."
    end
    
    show do
            title "Second calibration point"
            check "Dip electrode about 2 cm into the pH 4 (red) standard buffer solution."
            check "Press the CAL button to enter calibration mode. The CAL indicator will be shown on the screen display."
            check "Allow about 30-40 seconds for the pH meter reading to stablize, then press the <b>HOLD/ENT</b> button to confirm the second calibration point."
            check "Rinse electrode by DI water and wipe it dry with KimWipes."
    end 
    
    show do
            title "Third calibration point"
            check "Dip electrode about 2 cm into the pH 10 (blue) standard buffer solution."
            check "Press the CAL button to enter calibration mode. The CAL indicator will be shown on the screen display."
            check "Allow about 30-40 seconds for the pH meter reading to stablize, then press the <b>HOLD/ENT</b> button to confirm the third calibration point."
            check "After the third point calibration, the meter will automatically return to the measurement mode."
            check "Rinse electrode by DI water and wipe it dry with KimWipes."
    end
    
    show do
            title "pH value adjustment"
            check "Dip electrode about 2 cm into the buffer in the 500 mL beaker."
            check "The pH value of the buffer should be around 7.7"
            check "Adjust pH value to 7.7 by HCl or 5M NaOH if pH value is out of expecting range."
            check "Press <b>ON/OFF</b> to turn off the meter."
            check "Rinse electrode by DI water and wipe it dry with KimWipes."
            check "Return the meter and three standard buffers."
    end
    show do
            title "Label the bottle"
            check "Fill the beaker with sterile DI water to the 500 mL-mark. Stir the buffer for 2 minutes."
            check "Grab a 500 mL bottle and label it with <b>Purification Buffer, your initials, the date</b>"
            check "Pour the prepared buffer to the bottle."
            note "If you are using non-sterile DI water, filter the buffer by a top-bottle filter in this step."
            check "Place the purification buffer in 4°C refrigerator(BO.110)."
    end
    
    show do
            title "Clean up"
            check "Return chemical reagents."
            check "Place the used beaker and stir bar to the dishwashing area."
    end
    
    
    operations.store interactive: false
    
    return {}
    
  end

end

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object_types:
  - {name: Laemmli Sample Buffer, description: Protein sample for SDS-PAGE analysis, handler: sample_container, unit: Protein, release_method: return, prefix: M20, sample_type_name: Protein}
  - {name: 12% SDS Gel in Coomassie Staining, description: Protein stained by coomassie blue, handler: collection, unit: Protein, release_method: return, rows: 1, columns: 3, sample_type_name: Protein}
  - {name: 12% SDS Gel in Tank, description: For SDS-PAGE analysis, handler: collection, unit: box, release_method: dispose, rows: 1, columns: 3}
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operation_type: SDS-PAGE Analysis
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Before IPTG, sample_types: [Protein], object_types: [Laemmli Sample Buffer], routing: PR}
  - {ftype: sample, role: input, name: After IPTG, sample_types: [Protein], object_types: [Laemmli Sample Buffer], routing: PR}
  - {ftype: sample, role: output, name: SDS Gel, sample_types: [Protein], object_types: [12% SDS Gel in Coomassie Staining], part: true, routing: PR}
  - {ftype: sample, role: input, name: Protein, sample_types: [Protein], object_types: [Laemmli Sample Buffer], routing: PR}
  - {ftype: sample, role: input, name: SDS Gel, object_types: [12% SDS Gel in Tank], part: true, routing: G}
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documentation:
The objective of this protocol is to analyze proteins in a sample by electrophoresis. 

- Workflow:
  - SDS-PAGE Gel Casting > *SDS-PAGE Analysis* > Scan Gel
- Steps:
  - [01] Grab the samples which are prepared by the protocol "SDS-PAGE Sample Preparation".
  - [02] Load samples into wells using a loading tip.
    
| Well 01       | Well 02              | Well 03             | Well 04                              |
| --------------| ---------------------| --------------------| -------------------------------------|
| Protein ladder| Sample 01            | Sample 02           | Sample 03                            |
|               | Before IPTG induction| After IPTG induction| Protein Sample (Concentrated protein)|
    
  - [03] Attach the lid to the tank and start electrophoresis.
  - [04] Run gel until the protein ladder is fully separated.
  - [05] Remove gel from the glass cassette and wash the gel for three times with clean water.
  - [06] Stain gel with gel staining buffer for 1 hour.
  - [07] Destain gel with clean until the gel matrix background is clear.

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protocol:
# Author: Pei Wu , Sep 2018

needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  def main
    
    operations.retrieve

    op_in_protein   = []
    op_in_before    = []
    op_in_after     = []
    
    amount_protein  = []
    
    op_count = 0
    
    operations.running.each do |op|
        op.set_input_data("Protein", :protein_concentration, Random.rand(0.1..3)) if debug
        # 
        op_count = op_count + 1
        op_in_protein   << op.input("Protein").item.id
        op_in_before    << op.input("Before IPTG").item.id
        op_in_after     << op.input("After IPTG").item.id
        

        tmp_protein = (2*20/(op.input_data("Protein", :protein_concentration).to_f)).ceil # ul
        if tmp_protein <= 40
            amount_protein << 40
        elsif tmp_protein <= 60
            amount_protein << tmp_protein
        else
            amount_protein << 60
        end
        
    end

    op_in_gel = operations.map { |op| op.input("SDS Gel").collection.id }.uniq
    
    # Don't use generic operations.make
    operations.each do |op|
        op.output("SDS Gel").make_part(
          op.input("SDS Gel").collection,
          op.input("SDS Gel").row,
          op.input("SDS Gel").column
        )
    end
    
    op_out_gel = operations.map { |op| op.output("SDS Gel").collection.id }.uniq
    
    tank_count = (op_in_gel.size)/4.floor
    remainder = (op_in_gel.size) % 4
    if remainder != 0
        tank_count = tank_count + 1
    end

    # Load samples into wells using a pipet with gel loading tips. [note] load samples slowly to allow them to settle evenly on the bottom of the well
    # Arrange them in the following order:

    #  -----------------------------------------------------------------------------------------
    # | marker |         Batch 1          |         Batch 2          |         Batch 3          |
    # | --------------------------------------------------------------------------------------- |
    # | marker | Before | After  | Sample | Before | After  | Sample | Before | After  | Sample |
    #  -----------------------------------------------------------------------------------------
    
    #  -----------------------------------------------------------------------------------------
    # | Col 1  | Col 2  | Col 3  | Col 4  | Col 5  | Col 6  | Col 7  | Col 8  | Col 9  | Col 10 |
    # | --------------------------------------------------------------------------------------- |
    # | marker | ID_B1  | ID_A1  | ID_I1  | ID_B2  | ID_A2  | ID_I2  | ID_B3  | ID_A3  | ID_I3  |
    #  -----------------------------------------------------------------------------------------
    grab_lids(tank_count)
    
    load_marker(op_in_gel)
    
    load_sample_into_wells(op_count,op_in_protein,op_in_before,op_in_after,op_in_gel,amount_protein)

    # Place the lid on the tank and make sure to align it with the color-coded plugs.
    place_lid_and_align_to_plugs(op_in_protein,op_in_before,op_in_after)
    
    set_a_30mins_timer
    
    remove_gel_cassette(op_in_gel)
    
    # Remove the gels from the gel cassette by gently separating the two plates of the gel cassette.
    gel_removal
    
    # Remove the gel by floating it off the plate, inverting the gel and plate under water.
    
    # Soak the gel in water and put the container on the shaker in the incubator.
    gel_wash(op_in_gel)
    
    # Replace water with clean water every 5mins for three times.
    second_wash(op_in_gel)
    
    final_wash_add_staining(op_in_gel)
    
    # Put the container on the shaker in incubator for 1hour.
    put_container_on_shaker_1hr(op_in_gel)
    
    # Replace the water with clean water
    remove_gel_stain(op_in_gel)
    
    background_wash(op_in_gel)
    
    operations.each do |op|
        op.input("SDS Gel").item.mark_as_deleted
        op.output("SDS Gel").child_item.move "on the shaker in a still incubator"
      end
   
    operations.store
    get_protocol_feedback

    return {}
  end
  
  def grab_lids(tank_count)
    show do
        title "Set up the power supply"
        check "In the gel room, obtain a power supply."
        check "Grab <b>#{tank_count}</b> lid(s). Attach the electrodes of a lid to the power supply. Make sure to align the color-coded plugs and jacks (black to black / red to red)."
        image "Actions/ProteinPurification/lid.jpg"
    end
  end
  
  def load_marker(op_in_gel)
    show do
        title "Add protein ladder to gel"
        check "Grab the protein ladder from a box label <b>protein purification</b> in -20°C freezer (B1-165)."
        check "Pipette 10 µl of the protein ladder to well position 1 (the leftmost well) of gel #{op_in_gel.to_sentence}."
    end
  end

  def load_sample_into_wells(op_count,op_in_protein,op_in_before,op_in_after,op_in_gel,amount_protein)
    show do 
      title "Load sample into gel"
      check "Grab a P200 pipettor and a box of gel loading tip."
      check "Load samples to the gel according to the table:"
      note "Load the sample slowly to allow it to settle evenly on the bottom of the well. Be careful not to puncture the bottom of gel wells."
      for i in 0...op_in_gel.size
        #note "Gel ID: #{op_in_gel[i]}"
        op_table = [["Gel ID","Well number","Sample ID","Loading amount"]]
        well_no = 2
        if (i+1)*3 > op_count
            length = op_count - (i*3)
        else
            length = 3
        end
        for j in 0...length
            # before
            row = []
            row << op_in_gel[i]
            row << well_no
            row << {content:op_in_before[i*3+j], check: true}
            row << "40 µl"
            op_table << row
            well_no = well_no + 1
            # after
            row = []
            row << op_in_gel[i]
            row << well_no
            row << {content:op_in_after[i*3+j], check: true}
            row << "40 µl"
            op_table << row
            well_no = well_no + 1
            # sample
            row = []
            row << op_in_gel[i]
            row << well_no
            row << {content:op_in_protein[i*3+j], check: true}
            row << "#{amount_protein[i*3+j]} µl"
            op_table << row
            well_no = well_no + 1
        end
        table op_table
      end
      check "If there is an empty well, load 10 µl of sample buffer into each empty well to avoid lateral diffusion."
      image "Actions/ProteinPurification/loading_tip.jpg"
    end
  end
    
  def place_lid_and_align_to_plugs(op_in_protein,op_in_before,op_in_after)
    show do 
      title "Start Electrophoresis"
      check "Attach the lid to tank. Make sure that the red electrode attaches to the red terminal of the power supply, and the black 
      electrode attaches to the neighboring black terminal (as shown in the picture)."
      check "Set the power supply to 80 V."
      check "Set a 20-min timer and hit the RUN button to start."
      check "while waiting, return the protein ladder, sample buffer, P200 pipettor and gel loading tip box."
      image "Actions/ProteinPurification/Start_Electrophoresis.jpg"
    end
  end
  
  def set_a_30mins_timer
      show do
        title "Electrophoresis"
        check "Set the power supply to 150 V."
        check "Set a 50-mins timer and hit the RUN button to start."
        check "Check on gels with a manager."
        bullet "If the protein ladder is fully separated and the green marker/blue line sits on the bottom of a gel, proceed to the next step."
        bullet "If not, the lab manager may have you set another timer."
      end
  end
  
  def remove_gel_cassette(op_in_gel)
    show do 
        title "Remove gel cassette"
        check "Turn off the power supply."
        check "Remove the tank lid."
        check "Pour off the running buffer into the sink."
        check "Grab <b>#{op_in_gel.size}</b> box(es) and label with ID: #{op_in_gel.to_sentence}."
        check "Fill the box half full of DI water."
        check "Open the arms of assembly and release the gel cassette."
        check "Place the gel cassette into the corresponding box (as shown in the picture)."
        image "Actions/ProteinPurification/empty_box.jpg"
    end
  end

  def gel_removal
    show do 
      title "Remove gel from the glass cassette"
      check "Grab a gel releaser."
      check "Gently separate the two plates of a gel cassette by using a gel releaser. (as shown in the picture 1)"
      check "Remove the short plate on the top."
      check "Cut away the top layer of gel by using a gel releaser. (as shown in the picture 2)"
      check "Inverting the glass plate under water. Floating the gel off the plate in the corresponding box."
      image "Actions/ProteinPurification/gel_releaser.jpg"
    end
  end

  def gel_wash(op_in_gel)
    show do 
      title "Wash gels"
      check "Place #{op_in_gel.to_sentence} on the shaker in a still incubator."
      check "Wash gels at 300 rpm for 5 minutes."
      timer initial: { hours: 0, minutes: 5, seconds: 0}
      check "While waiting, clean up the glass plates, running tanks and the gel releaser by rinsing with water."
      check "Remove the dot stickers on clamping frames and wash it by rinsing with water."
      check "Return the lids."
      image "Actions/ProteinPurification/shaker_in_incubator.jpg"
    end
  end
    
  def second_wash(op_in_gel)
    show do 
      title "Second wash"
      check "Retrieve #{op_in_gel.to_sentence} from shaker."
      check "Pour off water and fill the box half full of DI water."
      check "Return #{op_in_gel.to_sentence} to the shaker in a still incubator."
      check "Wash gels at 300 rpm for 5 minutes."
      timer initial: { hours: 0, minutes: 5, seconds: 0}
    end
  end
  
  def final_wash_add_staining(op_in_gel)
    show do
        title "Stain gels"
        check "Retrieve #{op_in_gel.to_sentence} from shaker."
        check "Pour off water."
        check "Grab a motorized pipet."
        check "Grab a gel staining buffer from 4°C refrigerator (R1-350)."
        check "Add 20 mL of gel staining buffer to each box."
        check "Return the gel staining buffer."
        image "Actions/ProteinPurification/gel_staining_buffer.jpg"
    end
  end

  def put_container_on_shaker_1hr(op_in_gel)
    show do 
      title "Stain gels"
      check "Place #{op_in_gel.to_sentence} on the shaker in a still incubator."
      check "Stain gel at 150 rpm for 1 hour."
      timer initial: { hours: 1, minutes: 0, seconds: 0}
    end
  end

  def remove_gel_stain(op_in_gel)
    show do 
      title "Remove gel staining buffer"
      check "Retrieve #{op_in_gel.to_sentence} from the shaker."
      check "Pour off gel staining buffer."
      check "Rinse gels with water twice."
      check "Fill the box half full of DI water."
    end
  end
  
  def background_wash(op_in_gel)
    show do
        title "Destain gels "
        check "Place #{op_in_gel.to_sentence} on a shaker in the still incubator."
        check "Wash gels at 300 rpm for 30 minutes."
        timer initial: { hours: 0, minutes: 30, seconds: 0}
    end
    
    show do
        title "Destain gels "
        check "Retrieve #{op_in_gel.to_sentence} from the shaker."
        check "Pour off water and fill the box half full of DI water."
        check "Place gel box on shaker in a still incubator."
        check "Wash gel overnight."
    end
  end
  
end

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operation_type: SDS-PAGE Gel Casting
category: Protein Purification
deployed: false
on_the_fly: true
field_types:
  - {ftype: sample, role: output, name: SDS Gel, object_types: [12% SDS Gel in Tank], part: true, routing: G}
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documentation:
The objective of this protocol is to cast a gel for SDS-PAGE analysis.

- Workflow:
  - *SDS-PAGE Gel Casting* > SDS-PAGE Analysis
- Steps:
  - [01] Grab a short plate, spacer plate, casting frame, comb, clamping frame, gel running tank and casting stand with gray foam gasket.
  - [02] Slide two glass plates into the casting frame and engage the presssure cams to secure the glasses in the casting frame.
  - [03] Assemble the casting frame on the casting stand.
  - [04] Load water to the glass cassette sandwich and Check it with leakage.
  - [05] Pour off water and prepare 12% resolving gel solution.
  - [06] Load resolving gel solution into the glass cassette and overlay isopropanol.
  - [07] Wait for 1 hour and pour off isopropanol.
  - [08] Prepare 10% stacking gel solution and Load it to the glass cassette.
  - [09] Insert a comb and wait for 30 minutes.
  - [10] Remove the comb and release glass cassette from the casting frame.
  - [11] Slide the glass cassette into clamping frame and lock it into place.
  - [12] Place the clamping frame assembly into the gel running tank.
  - [13] Prepare running buffer and fill the gel running tank with running buffer.

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protocol:
# Author: Pei Wu , Sep 2018

needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  def main
    op_count = operations.size

    # 1 batch           -> 3 inputs: before, after, iptg
    # 1 gel             -> max. 3 batches [marker, batch1, batch2, batch3]
    # 1 clamping frame  -> max. 2 gels
    # 1 tank            -> max. 2 frames
    
    gel_count = (op_count/3).floor
    remainder = op_count % 3
    if remainder != 0
        gel_count = gel_count + 1
    end
    
    before = operations.size
    
    operations.make
    
    op_out_gel = []
    operations.output_collections["SDS Gel"].each do |op_collection|
        op_out_gel << op_collection.id
    end
    
    clamping_frame_count = (op_count/6).floor
    remainder = op_count % 6
    if remainder != 0
        clamping_frame_count = clamping_frame_count + 1
    end
    
    running_buffer=0
    water=0
    for i in 1..clamping_frame_count
        if i%2 == 0
            running_buffer = running_buffer + 20
            water = 10*running_buffer - 20
        else
            running_buffer = running_buffer + 80
            water = 10*running_buffer - 80
        end
    end
    
    tank_count = (op_count/12).floor
    remainder = op_count % 12
    if remainder != 0
        tank_count = tank_count + 1
    end
    
    # Place the casting frame at upright coner with the pressure cams in the open position and facing to a flat surface.
    place_casting_frame(gel_count,clamping_frame_count)
        
    # Slide the two glass plates into the casting frame, keeping the short plate facing to front of the frame.
    place_short_plate_slide
        
    # Assemble the casting frame on the casting stand.
    place_assemble_frame_into_stand(clamping_frame_count)
        
    # Load water into glass cassette sandwich for testing leaking.
    test_leaking
    
    # - Add 0.01g APS powder to 100uL water
    prepare_aps_solution(gel_count)
    
    
    # Prepare 12% resolving gel
    prepare_resolving_gel(gel_count)
    
    # Add 2mL isopropanol on the top of the gel buffer in the gel cassette sandwich.
    wait_for_1h
        
    # Prepare one 10% stacking gel
    prepare_stacking_gel(gel_count)
     
    set_timer_30mins
    
    place_gel_into_clamping(clamping_frame_count)
    
    place_frames_into_tank(tank_count,clamping_frame_count)
    
    running_buffer_preparation(running_buffer,water)   
    
    pour_running_buffer
    
    label_gel_id(op_out_gel)
    
    clean_up
    
    operations.store
    get_protocol_feedback

    return {}
  end
  
  def place_casting_frame(gel_count,clamping_frame_count)
    show do
       title "Glass cassette preparation"
       check "Grab the following items:"
       note "#{gel_count} short plate"
       note "#{gel_count} spacer plate"
       note "#{gel_count} comb"
       note "#{gel_count} casting frame"
       #bullet "#{clamping_frame_count} casting stand"
       note "#{gel_count} gray foam gasket"
       check "Make sure the glass plates and comb are dry and clean. If not, spray ethanol on them and wipe them dry with Kimwipes."
       image "Actions/ProteinPurification/casting_tool.jpg"
    end
  end

  def place_short_plate_slide
    show do
       title "Assemble glass cassette sandwich"
       check "Grab a spacer plate and place a short plate on top of it (as shown in the picture 1)."
       check "Place a casting frame upright with the pressure cams in the open position."
       check "Slide glass plates into the casting frame (as shown in the picture 2)"
       check "Push plates vertically to the benchtop. Make sure both plates are flush at bottom."
       check "Engage pressure cams to secure the glass cassette in the casting frame (as shown in the picture 3)."
       check "Make sure the short plate is facing to front of the frame and the labeling on the spacer plate is up."
       check "To avoid leakage, put one finger at the bottom of plates and slide the finger to check both plates are flush at bottom."
       check "Repeat the steps above until all glass cassette sandwiches are assembled."
       image "Actions/ProteinPurification/casting_frame.jpg"
    end
  end
    
  def place_assemble_frame_into_stand(clamping_frame_count)
    show do
        title "Casting stand assembly" 
        check "Grab <b>#{clamping_frame_count}</b> casting stand(s) (as shown in the picture 1)."
        check "Place the gray foam gasket on the casting stand (as shown in the picture 2)."
        check "Clamp casting frame on casting stand (as shown in the picture 3)."
        image "Actions/ProteinPurification/casting_stand_new.jpg"
    end
  end
    
  def test_leaking
    show do
       title "Leak testing"
       check "Grab a motorized pipet."
       check "Pipet 10 mL of water into the glass cassette sandwich."
       check "Wait for 2 minutes. Check for leaks"
        timer initial: { hours: 0, minutes: 2, seconds: 0}
       bullet "If there is a leakage, wipe glass plates dry. Reassemble glass plates and make sure plates are flush at bottom."
       bullet "If there is no leakage, proceed to the next step."
       check "Remove water from glass cassette sandwich. Pour water to sink."
       check "Hold the casting stand upside down and remove remaining water in glass cassette with paper towel."
    end
  end
  
  def prepare_aps_solution(gel_count)
    show do
       title "Prepare 10% Ammonium persulfate solution"
       check "Grab a 1.5 mL tube and label with APS"
       check "Weigh #{gel_count*0.02} g of APS powder on a weighing paper and add the powder into the 1.5 mL tube."
       check "Pipette #{gel_count*200} µl water into the tube."
       check "Vortex until the powder is fully dissolved."
       image "Actions/ProteinPurification/APS.jpg"
    end
  end
  
  def prepare_resolving_gel(gel_count)
    op_table = [[" Order "," Reagent "," Volume "],
    ["1",{content:"Water", check: true},"#{gel_count*3.4} mL"],
    ["2",{content:"Acrylamide", check: true},"#{gel_count*4} mL"],
    ["3",{content:"Resolving gel buffer", check: true},"#{gel_count*2.5} mL"],
    ["4",{content:"10% SDS buffer", check: true},"#{gel_count*100} µl"],
    ["5",{content:"APS", check: true},"#{gel_count*100} µl"],
    ["6",{content:"TEMED", check: true},"#{gel_count*10} µl"],
    ["","Total volume","#{gel_count*10} mL"]
    ]

    show do
        title "Gel solution preparation"
        note  "Gather the following items"
        check "DI water"
        check "Resolving gel buffer"
        check "TEMED"
        check "Acrylamide (in 4°C refrigerator)"
        check "10% SDS buffer"
        check "APS solution (just fresh prepared)"
        check "a 50 mL falcon tube"
        check "Isopropanol"
        check "motorized pipet and a 10 mL serological pipette."
    end
    
    show do
        title "Prepare 12% resolving gel solution"
        note "Prepare a gel solution in the Falcon tube according to the table. Order is important."
        table op_table
        image "Actions/ProteinPurification/resolving_buffer.jpg"
    end
    
    show do
        title "Resolving gel casting"
        warning "Perform the following steps as quickly as possible. Gel solution turns solid in a short time."
        check "Pipette up and down three times by using a motorized pipet."
        check "Load 7.5 mL of gel solution to each gel cassette sandwich. Avoid air bubbles."
        check "Gently pipette 2 mL of isopropanol into glass cassette from left to right. Avoid to disturb the gel solution."
    end
  end

  def wait_for_1h
    show do
       title "Resolving gel polymerization"
       check "Set a 1-hr timer."
       timer initial: { hours: 1, minutes: 0, seconds: 0}
       check "While waiting, return the resolving gel buffer and isopropanol. Keep other reagents for later use."
       check "When the timer is up, pour off isopropanol into the sink. Remove remaining isopropanol with paper towel."
    end
  end         
  
  def prepare_stacking_gel(gel_count)
    op_table = [[" Order "," Reagent "," Volume "],
    ["1",{content:"Water", check: true},"#{gel_count*2.05} mL"],
    ["2",{content:"Acrylamide", check: true},"#{gel_count*1.65} mL"],
    ["3",{content:"Stacking gel buffer", check: true},"#{gel_count*1.25} mL"],
    ["4",{content:"10% SDS buffer", check: true},"#{gel_count*50} µl"],
    ["5",{content:"APS", check: true},"#{gel_count*25} µl"],
    ["6",{content:"TEMED", check: true},"#{gel_count*5} µl"],
    ["","Total volume","#{gel_count*5} mL"]
    ]
    
    show do
        title "Prepare stacking gel solution"
        check "Grab a 50 mL falcon tube, motorized pipet and a 10 mL serological pipette."
        check "Grab stacking gel buffer."
        note "Prepare a gel solution in the Falcon tube according to the table. Order is important."
        table op_table
    end
    
    show do
    title "Stacking gel casting"
        warning "Perform the following steps as quickly as possible. Gel solution turns solid in a short time."
        check "Pipette up and down three times by using a motorized pipet."
        check "Gently load 2.5 mL of gel solution to each gel cassette sandwich. Avoid air bubbles."
        check "Insert a comb into the gel cassette (as shown in the picture)."
        image "Actions/ProteinPurification/stacking_buffer_and_comb.jpg"
    end
  end

  def set_timer_30mins
    show do
        title "Stacking gel polymerization"
        bullet "Set a 40-mins timer." 
        timer initial: { hours: 0, minutes: 40, seconds: 0}
        check "While waiting, return all the reagents. Discard the APS solution."
    end
  end
  
  def place_gel_into_clamping(clamping_frame_count)
    show do
        title "Electrode assembly"
        check "Gently remove the comb from the gel cassette."
        check "Grab <b>#{clamping_frame_count}</b> clamping frame(s)."
        check "Set the clamping frame to the green arms open position. Make sure the red marking is on your left (as shown in the picture 1)."
        check "Release the glass cassette from the casting frame."
        check "Place a gel sandwich into the front side of the clamping frame with the short plate facing inward (as shown in picture 2)."
        note "**If an odd number of gels is being run, make sure to use a buffer dam.**"
        check "Make sure the glass cassettes are sitting on the bottom notches of the clamping frame. Lock gel cassettes by sliding the green arms of the clamping frame over the gels (as shown in picture 3)."
        image "Actions/ProteinPurification/clamping_frame.jpg"
    end
  end

  def place_frames_into_tank(tank_count,clamping_frame_count)
    show do
        title "Gel tank preparation"
        check "Grab <b>#{tank_count}</b> gel running tank(s)."
        check "Make sure the red marking on the top inside edge of tank is on your left (as shown in the picture 1)."
        check "Place the electrode assembly into the gel running tank. Make sure the red electrode is matching with the red marking on the gel running tank (as shown in the picture 2)."
        image "Actions/ProteinPurification/running_tank.jpg"
    end  
  end
  
  def running_buffer_preparation(running_buffer,water)
    show do
        title "Running buffer preparation"
        check "Grab a beaker and cylinder."
        check "Add #{water} mL of DI water to the beaker."
        check "Add #{running_buffer} mL of premixed 10x Tris/glycine/SDS running buffer to the beaker."
        check "Stir for 2 minutes."
        timer initial: { hours: 0, minutes: 2, seconds: 0}
        image "Actions/ProteinPurification/running_buffer.jpg"
    end
  end
  
  def pour_running_buffer
    show do
        title "Fill tank with Running buffer"
        check "Place the gel running tank near to the power supply in the gel room."
        check "Fill <b>up chamber</b> with running buffer to the brim (as shown in the picture 1)."
        check "Wait for 2 minutes. Check for leaks." 
        timer initial: { hours: 0, minutes: 2, seconds: 0}
        bullet "If there is a leakage, pour running buffer back to the beaker. Open the green arms of clamping frame and then reassemble glass plates on the clamping frame."
        bullet "If not, proceed to the next step."
        check "Fill the <b>lower chamber</b> with running buffer to the indicated level. (2-Gels or 4-Gels line markings on the running gel tank, as shown in the picture 2)"
        image "Actions/ProteinPurification/leaking_check.jpg"
    end
  end
  
  def label_gel_id(op_out_gel)
    show do 
        title "Label gel ID"
        check "Write ID: #{op_out_gel.to_sentence} on dot stickers."
        check "Affix the label on clamping frame. (as shown in the picture)"
        image "Actions/ProteinPurification/dot_label.jpg"
    end
  end
  
  def clean_up
    show do
        title "Clean up"
        check "Clean up combs, casting frames, casting stands and gray foam gaskets by rinsing with water."
        check "Discard all used Falcon tubes and 1.5 mL tubes."
        check "Return the motorized pipet."
    end
  end

end

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operation_type: SDS-PAGE Sample Preparation
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Before IPTG, sample_types: [Plasmid], object_types: [Overexpression of Plasmid], routing: P}
  - {ftype: sample, role: input, name: After IPTG, sample_types: [Plasmid], object_types: [Overexpression of Plasmid], routing: P}
  - {ftype: sample, role: output, name: Before IPTG, sample_types: [Protein], object_types: [Laemmli Sample Buffer], routing: PR}
  - {ftype: sample, role: output, name: After IPTG, sample_types: [Protein], object_types: [Laemmli Sample Buffer], routing: PR}
  - {ftype: sample, role: input, name: Protein, sample_types: [Protein], object_types: [Concentrated Protein], routing: PR}
  - {ftype: sample, role: output, name: Protein, sample_types: [Protein], object_types: [Laemmli Sample Buffer], routing: PR}
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documentation:
The objective of this protocol is to prepare samples for SDS-PAGE analysis.

- Workflow:
  - Concentrate Protein > *SDS-PAGE Sample Preparation* > SDS-PAGE Analysis
- Steps:
  - [01] Grab all reserved samples: cell pellet before IPTG induction, cell pellet after IPTG induction and concentrated protein sample.
  - [02] Add lysis buffer to first two samples and vortex to mix well.
  - [03] Add sample buffer to all samples.
  - [04] Heat at 95°C for 5 minutes.

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protocol:
# Author: Pei Wu , Sep 2018

needs "Standard Libs/Feedback"

class Protocol
  include Feedback
  def main

    operations.retrieve.make
    
    # Gather all reserved sample: 
    # - sample 01: before IPTG induction with design ID
    # - sample 02: after IPTG induction with design ID
    # - sample 03: purified protein
    
    op_in_protein   = []
    op_in_before    = []
    op_in_after     = []
    op_out_protein  = []
    op_out_before   = []
    op_out_after    = []
    
    lysis_before      = []
    lysis_after       = []
    amount_protein    = []
    
    op_count = 0
    
    operations.running.each do |op|
        op.set_input_data("Before IPTG", :od_value, Random.rand(0.8..1.0)) if debug
        op.set_input_data("After IPTG", :od_value, Random.rand(0.8..1.0)) if debug
        op.set_input_data("Protein", :protein_concentration, Random.rand(0.01..3)) if debug

        op_count = op_count + 1
        op_in_protein   << op.input("Protein").item.id
        op_in_before    << op.input("Before IPTG").item.id
        op_in_after     << op.input("After IPTG").item.id
        op_out_protein  << op.output("Protein").item.id
        op_out_before   << op.output("Before IPTG").item.id
        op_out_after    << op.output("After IPTG").item.id
        
        tmp_before  = (op.input_data("Before IPTG", :od_value).to_f * 100).floor
        tmp_after   = (op.input_data("After IPTG", :od_value).to_f * 100).floor
        # to get 0.01mg from sample, the amount is 0.01(mg)*1000(ul/mL)/protein_concetration(mg/mL)
        tmp_protein = (20*3.5/(op.input_data("Protein", :protein_concentration).to_f)).round(1) # ul
        
        # Record the input (Concentrated Protein) protein concentration to output (Laemmli Sample Buffer).
        protein_out = op.output("Protein").item
        protein_out.associate :protein_concentration, op.input_data("Protein", :protein_concentration).to_f
        
        lysis_before   << tmp_before
        lysis_after    << tmp_after
        amount_protein  << tmp_protein  # ul
        
    end

    # Preheat the heat plate to 98°C.
    sample_preparation(op_in_protein,op_in_before,op_in_after)
    
    add_lysis(op_count,op_in_before,op_in_after,lysis_before,lysis_after)
    
    grab_tubes(op_count,op_in_before,op_in_after,op_in_protein,op_out_protein,op_out_before,op_out_after,amount_protein)
    
    operations.each do |op|
        op.input("Before IPTG").item.mark_as_deleted
        op.input("After IPTG").item.mark_as_deleted
    end
    
    operations.store
    
    clean_up
     
    get_protocol_feedback

    return {}

  end

  def sample_preparation(op_in_protein,op_in_before,op_in_after)
    show do
        title "Set up a heat block"
        check "Set a heat block to 98°C."
        check "Grab a ice block."
        check "Place #{op_in_protein.to_sentence} on ice block."
    end
  end

  
  def add_lysis(op_count,op_in_before,op_in_after,lysis_before,lysis_after)
    op_table = [["Sample stock ID","Lysis Buffer Volume (µl)"]]
    for i in 0..(op_count-1)
        row = []
        row << {content:op_in_before[i], check: true}
        row << lysis_before[i]
        op_table << row
        row = []
        row << {content:op_in_after[i], check: true}
        row << lysis_after[i]
        op_table << row
    end
    show do
        title "Suspend cell pellet in lysis buffer"
        #"Formula: lysis buffer(uL) = OD value* 100 uL lysis buffer."
        check "Grab the lysis buffer from 4°C refrigerator."
        check "Add lysis buffer to tubes according to the table."
        table op_table
        check "Vortex samples for 10 seconds or until no clumps of cell pellet."
        check "Return the lysis buffer to 4°C refrigerator."
    end
  end
  
  
  def grab_tubes(op_count,op_in_before,op_in_after,op_in_protein,op_out_protein,op_out_before,op_out_after,amount_protein)
    op_table_2 = [["Tube ID","Volume"]]
    add_amount = []
    for i in 0..(op_count-1)
        row = []
        row << {content:(i*3+3), check: true}
        if amount_protein[i] <= 20*3.5
            amount_tmp = 20*3.5 - amount_protein[i]
        else
            amount_tmp = 0
        end
        add_amount << amount_tmp
        row << "#{amount_tmp.ceil} µl"
        op_table_2 << row
    end
    
    show do
        title "Sample Preparation"
        check "Grab <b>#{op_count*3}</b> tube(s) and label with ID from 1 to #{op_count*3}."
        check "Add PBS to tubes according to the table:"
        table op_table_2
    end
    
    op_table = [["Sample ID (Stock)","Volume","Tube ID (Output)"]]
    all_output = []
    for i in 0..(op_count-1)
        # table
        row = []
        row << op_in_before[i]
        row << "70 µl"
        row << (i*3+1)
        op_table << row
        row = []
        row << op_in_after[i]
        row << "70 µl"
        row << (i*3+2)
        op_table << row 
        row = []
        row << op_in_protein[i]
        row << "#{amount_protein[i]} µl"
        row << (i*3+3)
        op_table << row
        # all output IDs
        all_output << op_out_before[i]
        all_output << op_out_after[i]
        all_output << op_out_protein[i]
    end
    
    show do
        title "Add Sample"
        check "Pipette sample to corresponding tubes according to the table."
        table op_table
        check "Retrun #{op_in_protein.to_sentence} on ice block after use."
    end
    
    
    op_table_1 = [["Tube ID","Volume"]]
    all_output = []
    for i in 0..(op_count-1)
        # table
        row = []
        row << {content:(i*3+1), check: true}
        row << "70 µl"
        op_table_1 << row
        row = []
        row << {content:(i*3+2), check: true}
        row << "70 µl"
        op_table_1 << row 
        row = []
        row << {content:(i*3+3), check: true}
        row << "#{(amount_protein[i] + add_amount[i]).ceil} µl"
        op_table_1 << row
        # all output IDs
        all_output << op_out_before[i]
        all_output << op_out_after[i]
        all_output << op_out_protein[i]
    end
    
    show do
    title "Add sample buffer"
        check "Grab sample buffer from 4°C refrigerator (R1-250)."
        check "Pipette sample buffer to each tube according to the table. (Perform this step in fume hood)"
        table op_table_1
        check "Return the sample buffer to the 4°C refrigerator (R1-250)."
    end
    
    show do
       title "Heat samples"
       check "Seal tube caps (ID from 1 to #{op_count*3}) with parafilm, preventing sample from popping out of a tube under boil."
       check "Heat samples for 10 minutes at 98°C."
       timer initial: { hours: 0, minutes: 10, seconds: 0}
       check "Retrieve tubes from the heat block. Place samples on a rack."
       check "Turn off the heat block or set the temperature back to its setting."
       check "Remove the parafilm from the tubes."
    end
    
    op_table_3 = [["Tube ID","Sample ID"]]
    for i in 0..(op_count-1)
        # table
        row = []
        row << (i*3+1)
        row << {content:op_out_before[i], check: true}
        op_table_3 << row
        row = []
        row << (i*3+2)
        row << {content:op_out_after[i], check: true}
        op_table_3 << row 
        row = []
        row << (i*3+3)
        row << {content:op_out_protein[i], check: true}
        op_table_3 << row
    end
    
    show do
       title "Transfer samples"
       check "Spin sample tubes at 17,000 g for 10 minutes."
       check "Grab <b>#{op_count*3}</b> 1.5 mL tubes and label with sample ID according to the table."
       check "Transfer all the supernatant to new tubes according to the table.(Perform this step in fume hood)"
       table op_table_3
       check "Discard the tube labeled with ID from 1 to #{op_count*3}."
       check "Discard the tube labeled with ID:#{op_in_before.to_sentence}, #{op_in_after.to_sentence}"
    end
    
  end

  def clean_up
    show do
        title "Clean up"
        check "Return the ice block."
    end
  end

end

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operation_type: Scan Gel
category: Protein Purification
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: SDS Gel, sample_types: [Protein], object_types: [12% SDS Gel in Coomassie Staining], part: true, routing: PR}
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documentation:
The objective of this protocol is to verify protein expression.

- Workflow:
  - SDS-PAGE Analysis > *Scan Gel*
- Steps:
  - [01] Place the gel on a light box and take a picture.
  - [02] verify the protein expression.

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protocol:
# Author: Pei Wu , Sep 2018
# Modified from "Cloning/Extract Gel Slice"

needs "Standard Libs/UploadHelper"
needs "Standard Libs/AssociationManagement"
needs "Standard Libs/Feedback"


class Protocol
  include Feedback
  include UploadHelper, AssociationManagement
    
  # upload stuff
  DIRNAME="<where are gel files on computer>"
  TRIES=3
  
  def main

    operations.retrieve(interactive: true)
    
    take_out_filter
    
    # get gel images
    gels = operations.map { |op| op.input("SDS Gel").collection}.uniq
    gels.each do |gel|
    
        grouped_ops=operations.select { |op| op.input("SDS Gel").collection == gel }
        image_name = "gel_#{gel.id}"
        
        # image gel
        image_gel(gel,image_name)
        
        # upload image
        ups = uploadData("#{DIRNAME}/#{image_name}", 1, TRIES) # 1 file per gel
        ups = [Upload.find(1)] if debug
        
        up=nil
        if(!(ups.nil?))
            up=ups[0]

            gel_item = Item.find(gel.id)

            # associate gel image to gel
            gel_item.associate image_name, "successfully imaged gel", up
          
            grouped_ops.each do |op| # associate to all operations connected to gel
                # description of where this op is in the gel, to be used as desc tag for image upload
                location_in_gel = "#{op.input("SDS Gel").sample.name} is in row #{op.input("SDS Gel").row + 1} and column #{op.input("SDS Gel").column + 1}"
            
                # associate image to op with a location description
                op.associate image_name, location_in_gel, up
            
                # associate image to plan, or append new location to description if association already exists
                existing_assoc = op.plan.get(image_name)
                if existing_assoc && op.plan.upload(image_name) == up
                    op.plan.modify(image_name, existing_assoc.to_s + "\n" + location_in_gel, up)
                else
                    op.plan.associate image_name, location_in_gel , up
                end
            end
        end
        
        # check lengths of fragments in gel
        verify_protein_size(gel,grouped_ops)
        
        clean_up gel, gels
    end
    
    put_filter_back
    
    get_protocol_feedback

  end
  
  def check_gel_clean
    show do
        title "Check on gels"
        check "Check on gels with a manager."
        bullet "If blue dye has been removed from the gel matrix background and protein bands can be distinguished (as an example shown in the picture below), proceed to the next step ."
        bullet "If the background is still in dark blue, fill the box half full of fresh DI water. Wash gels for another 1 hour."
        image "Actions/ProteinPurification/gel_staining.jpg"
    end
  end
  
  def  take_out_filter
    show do
        title "Set up the camera"
        check "Take off the filter on the camera."
        check "Spray the light box with ethanol and wipe it dry with a paper towel."
        check "Place the light box on the UV light box for taking a photo. (as shown in the picture)"
        image "Actions/ProteinPurification/light_box.jpg"
    end
  end

  
  def image_gel(gel,image_name)
    show do
        title "Image gel #{gel}"
        check "Put the gel #{gel} on the light box and take a picture (protein marker is on the right side)."
        check "Check to see if the picture matches the gel before uploading."
        check "Rename the picture you just took exactly as <b>#{image_name}</b>"
    end
  end
  
  def verify_protein_size(gel,grouped_ops)
    op_table = [["Gel ID","Well Number","Batch - Sample","Expected protein expression"]]
    well_no = 2
    batch_no = 1

    grouped_ops.each do |op|
        # before
        row = []
        row << op.input("SDS Gel").item.id
        row << well_no
        row << "#{batch_no} - 1"
        #row << "Before IPTG"
        row << {content:"Uninduced", style:{color:"#90D"}}
        op_table << row
        well_no = well_no + 1
        # after
        row = []
        row << op.input("SDS Gel").item.id
        row << well_no
        row << "#{batch_no} - 2"
        #row << "After IPTG"
        row << {content: "Induced", style:{color:"#90D"}}
        op_table << row
        well_no = well_no + 1
        # sample
        row = []
        row << op.input("SDS Gel").item.id
        row << well_no
        row << "#{batch_no} - 3"
        #row << "Protein Sample"
        row << {content: "Purified", style:{color:"#90D"}}
        op_table << row
        well_no = well_no + 1
        
        batch_no = batch_no + 1
    end

    show {
        title "Verify protein expression"
        bullet "Verify samples on gel #{gel}:"
        table grouped_ops.start_table
          .custom_column(heading: "Gel ID") { |op| op.input("SDS Gel").item.id }
          .custom_column(heading: "Batch Number", checkable: false) { |op| op.input("SDS Gel").column + 1 }
          .custom_column(heading: "Expected Protein Size") { |op| op.input("SDS Gel").sample.properties["Size"] }
          .get(:correct, type: 'text', heading: "Does the bands of one data set match the expected result? (y/n)", default: 'y')
          .custom_column(heading: "User") { |op| op.user.name }
        .end_table
        bullet "<b>To verify a protein expression, every three wells are viewed as a data set for a batch. In the following table, 1-1, 1-2 and 1-3 are considered as one data set to verify a protein expression. The same condition applies to 2-1, 2-2 and 2-3 and so on.</b>"
        note"Expected protein expression of each well:"
        table op_table
        bullet "Example: expected protein expresssion for three kinds of proteins"
        image "Actions/ProteinPurification/expected_protein_expression.jpg"
    }
  end
  
  def clean_up gel, gels
      show {
        title "Discard gel"
        check "Dispose of the gel #{gel} into waste container."
      }
    end
    
    
 def put_filter_back
    show do
        title "Clean up"
        check "Spray the surface of the light box with ethanol and wipe it dry with a paper towel. Place it on the shelf."
        check "Reassemble the filter to the camera."
        check "Remove the label from the gel box."
        check "Clean up the gel box by rinsing with water. Return it to the gel station."
    end
  end

end
